WorkflowBuilder(Version=2.9.1)
GroupWorkflow Devices
    SubscribeSubject RigConfigs
    -> PropertyMapping(PortName(Selector=COMPortTimestampGenerator))
    -> GroupWorkflow TimestampGenerator
        Unit
        -> Bonsai.Harp.SynchronizeTimestamp => #1
        Harp.TimestampGeneratorGen3.CreateMessage(MessageType=Write, Payload=Harp.TimestampGeneratorGen3.CreateTimerFrequencyPayload(TimerFrequency=Timer1000Hz)) => #2
        #1, #2 -> Merge => #3
        ExternalizedMapping(PortName) => #4
        #3, #4 -> Harp.TimestampGeneratorGen3.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM16)
        -> PublishSubject ClockSynchronizerEvents
        -> WorkflowOutput

        GroupWorkflow Timestamps
            SubscribeSubject ClockSynchronizerEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.TimestampSeconds)
            -> PublishSubject Heartbeats

            SubscribeSubject ClockSynchronizerEvents
            -> Harp.TimestampGeneratorGen3.Parse(Register=Harp.TimestampGeneratorGen3.Timer)
            -> BehaviorSubject Timestamp => #6
            -> Take(Count=1) => #7
            #6, #7 -> WithLatestFrom
            -> Subtract
            -> BehaviorSubject Timebase
            -> WorkflowOutput

    SubscribeSubject RigConfigs
    -> PropertyMapping
      PortName(Selector=COMPortBehaviourBoard)
      PulseDO1(Selector=ValveOpenTime)
      PulseDO2(Selector=ValveOpenTime)
      PulseDO3(Selector=ZapitTriggerPulseWidth)
    -> GroupWorkflow BehaviorBoard
        GroupWorkflow RunningWheel
            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2)) => #0
            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderModePayload(EncoderMode=Position)) => #1
            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2)) => #2
            #0, #1, #2 -> Merge => #3
            ExternalizedMapping => #4
              Name(DisplayName=CommandsSubjectName, Description="The name of the Subject that carries command messages for a specific behavior device", Category=Subjects)
            #3, #4 -> MulticastSubject BehaviorCommands => #5
            ExternalizedMapping => #6
              Name(DisplayName=EventsSubjectName, Description="The name of the Subject that carries event messages from a specific behavior device", Category=Subjects)
            -> SubscribeSubject BehaviorEvents => #7
            #5, #7 -> SubscribeWhen
            #6 -> SubscribeSubject BehaviorEvents
            -> DelaySubscription(DueTime=PT0.5S)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData)
            -> MemberSelector(Selector=Encoder)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform ConvertSigned
              Expression: it > 32768.0 ? it - 65536.0 : (it < -32768.0 ? it + 65536.0 : it)
            -> Accumulate => #15
            ExternalizedMapping(CountsPerRev, WheelDiameterMm) => #16
            #15, #16 -> GroupWorkflow TicksToCentimeters(Description="Converts steps on a quadrature encoder to a distance in cm, published to a Subject") => #17
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=CountsPerRev, Description="The number of steps recorded on the quadrature encoder in a full revolution", Category="Running Wheel")) => #1
                Source2=#0, Source3=#1 -> Divide(Operand=WorkflowProperty<System.Int16>(Value=4096)) => #2
                ExternalizedMapping(Value(DisplayName=WheelDiameterMm, Description="The diameter of the wheel, in millimetres", Category="Running Wheel"))
                -> IntProperty(Value=75)
                -> Bonsai.Scripting.Expressions.ExpressionTransform CircumferenceCm
                  Expression: (it*Math.Pi)/10
                -> PropertyMapping(Value) => #6
                #2, #6 -> Multiply(Operand=FloatProperty(Value=23.561945))
                -> WorkflowOutput
            ExternalizedMapping(Name(DisplayName=WheelDistanceSubjectName, Description="The name of the Subject that carries the wheel distance in cm", Category=Subjects)) => #18
            #17, #18 -> PublishSubject WheelDistanceCm

        ExternalizedMapping(PortName)
        -> IncludeWorkflow
          Path=UclOpen.Devices:BehaviorBoard.BehaviorBoard.bonsai
          CommandsSubjectName=BehaviorCommands
          PortName=COM11
          DumpRegisters=true
          Heartbeat=Enabled
          EventsSubjectName=BehaviorEvents

        IncludeWorkflow
          Path=UclOpen.Devices:BehaviorBoard.CameraTriggerController.bonsai
          TriggerFrequency=50
          BehaviorCommandsSubjectName=BehaviorCommands
          BehaviorEventsSubjectName=BehaviorEvents
          CameraTriggerEventsSubjectName=CameraTriggerEvents

        ExternalizedMapping(PulseDO1, PulseDO2, PulseDO3)
        -> IncludeWorkflow
          Path=UclOpen.Devices:BehaviorBoard.PulseController.bonsai
          BehaviorCommandsSubjectName=BehaviorCommands
          OutputPulseEnable="DO1 DO2 DO3"
          PulseDO1=95
          PulseDO2=95
          PulseDO3=95
          BehaviorEventsSubjectName=BehaviorEvents
          TriggerPulseSubjectName=TriggerValve

    SubscribeSubject RigConfigs
    -> PropertyMapping(PortName(Selector=COMPortLicketySplit))
    -> GroupWorkflow LicketySplits
        ExternalizedMapping(PortName)
        -> IncludeWorkflow
          Path=UclOpen.Devices:LicketySplit.bonsai
          CommandsSubjectName=LickCommandsLeft
          PortName=COM15
          DumpRegisters=true
          Heartbeat=Enabled
          EventsSubjectName=LickEventsLeft
          Channel0TriggerThreshold=255
          Channel0UntriggerThreshold=255
          LickStateSubjectName=LickStateLeft

        Disable IncludeWorkflow
          Path=UclOpen.Devices:LicketySplit.bonsai
          CommandsSubjectName=LickCommandsRight
          PortName=COM13
          DumpRegisters=true
          Heartbeat=Disabled
          EventsSubjectName=LickEventsRight
          Channel0TriggerThreshold=0
          Channel0UntriggerThreshold=0
          LickStateSubjectName=LickStateRight

    GroupWorkflow StepperDriver
        SubscribeSubject RigConfigs
        -> PropertyMapping(StepperDriver1PortName(Selector=COMPortStepperDriver1), StepperDriver2PortName(Selector=COMPortStepperDriver2))
        -> GroupWorkflow InitializeStepperDrivers
            BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver1Commands => #0
            ExternalizedMapping(PortName(DisplayName=StepperDriver1PortName)) => #1
            #0, #1 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM14)
            -> BehaviorSubject StepperDriver1Events

            BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver2Commands => #4
            ExternalizedMapping(PortName(DisplayName=StepperDriver2PortName)) => #5
            #4, #5 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM12)
            -> BehaviorSubject StepperDriver2Events

        GroupWorkflow ReadSwitchStates
            SubscribeSubject StepperDriver1Events
            -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
            -> UnpackSwitchTriggers => #2
            -> Index(Operand=IntProperty(Value=0))
            -> BehaviorSubject _Motor0_switchState
            #2 -> Index(Operand=IntProperty(Value=1))
            -> BehaviorSubject _Motor1_switchState
            #2 -> Index(Operand=IntProperty(Value=2))
            -> BehaviorSubject _Motor2_switchState

            SubscribeSubject StepperDriver2Events
            -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
            -> UnpackSwitchTriggers => #11
            -> Index(Operand=IntProperty(Value=0))
            -> BehaviorSubject _Motor3_switchState
            #11 -> Index(Operand=IntProperty(Value=1))
            -> BehaviorSubject _Motor4_switchState

        GroupWorkflow InitialiseStepperDriverSettings
            SubscribeSubject StepperDriver1Events
            -> Take(Count=20)
            -> TakeLast(Count=1)
            -> Delay(DueTime=PT0.1S)
            -> Unit
            -> Defer "Initialize StepperDriver1"
                WorkflowInput Source1

                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1 Motor2")) => #2
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MaximumRunCurrentPayload(Motor2MaximumRunCurrent=0.5)) => #5
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #6
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #7
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MicrostepResolutionPayload(Motor2MicrostepResolution=Microstep8)) => #8
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1 Encoder2")) => #9
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1 Encoder2")) => #10
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #11
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #12
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #13
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1 Input2")) => #14
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #15
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #16
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput2OpModePayload(Input2OpMode=StopMotor2OnFalling)) => #17
                IntProperty(Value=25) => #18
                -> PropertyMapping(Motor0StepInterval)
                -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=200)) => #20
                #18 -> PropertyMapping(Motor1StepInterval)
                -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=200)) => #22
                #18 -> PropertyMapping(Motor2StepInterval)
                -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2StepIntervalPayload(Motor2StepInterval=200)) => #24
                #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #20, #22, #24 -> Concat
                -> MulticastSubject StepperDriver1Commands
                -> WorkflowOutput
            -> Delay(DueTime=PT0.1S) => #6
            SubscribeSubject StepperDriver2Events
            -> Take(Count=20)
            -> TakeLast(Count=1)
            -> Delay(DueTime=PT0.2S)
            -> Unit
            -> Defer "Initialize StepperDriver2"
                WorkflowInput Source1

                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1")) => #2
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #5
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #6
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1")) => #7
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1")) => #8
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #9
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #10
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #11
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1")) => #12
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #13
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #14
                IntProperty(Value=25) => #15
                -> PropertyMapping(Motor0StepInterval)
                -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=200)) => #17
                #15 -> PropertyMapping(Motor1StepInterval)
                -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=200)) => #19
                #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #17, #19 -> Concat
                -> MulticastSubject StepperDriver2Commands
                -> WorkflowOutput
            -> Delay(DueTime=PT0.1S) => #13
            #6, #13 -> Zip
            -> BooleanProperty(Value=true)
            -> BehaviorSubject StepperDriversInitialized => #16
            Annotation "Ensure I get the initial states"(Text="") => #17
            #16, #17 -> Harp.StepperDriver.CreateMessage(MessageType=Read, Payload=Harp.StepperDriver.CreateDigitalInputStatePayload(DigitalInputState=None)) => #18
            -> MulticastSubject StepperDriver1Commands
            #18 -> MulticastSubject StepperDriver2Commands

        GroupWorkflow MoveMotors
            SubscribeSubject StepperPositionCommand
            -> IncludeWorkflow(Path=Extensions\MoveStepperMotors.bonsai)

        GroupWorkflow ZEROMotors
            IncludeWorkflow => #0
              Path=Extensions\ZEROingMotors.bonsai
              SubjectName_switchState=_Motor0_switchState
              MotorID=0
              SubjectName_StepperDriver=StepperDriver1Commands
              SubjectName_switchState_again=_Motor0_switchState
            IncludeWorkflow => #1
              Path=Extensions\ZEROingMotors.bonsai
              SubjectName_switchState=_Motor1_switchState
              MotorID=1
              SubjectName_StepperDriver=StepperDriver1Commands
              SubjectName_switchState_again=_Motor1_switchState
            IncludeWorkflow => #2
              Path=Extensions\ZEROingMotors.bonsai
              SubjectName_switchState=_Motor2_switchState
              MotorID=2
              SubjectName_StepperDriver=StepperDriver1Commands
              SubjectName_switchState_again=_Motor2_switchState
            IncludeWorkflow => #3
              Path=Extensions\ZEROingMotors.bonsai
              SubjectName_switchState=_Motor3_switchState
              MotorID=0
              SubjectName_StepperDriver=StepperDriver2Commands
              SubjectName_switchState_again=_Motor3_switchState
            IncludeWorkflow => #4
              Path=Extensions\ZEROingMotors.bonsai
              SubjectName_switchState=_Motor4_switchState
              MotorID=1
              SubjectName_StepperDriver=StepperDriver2Commands
              SubjectName_switchState_again=_Motor4_switchState
            #0, #1, #2, #3, #4 -> Zip
            -> WorkflowOutput
        -> BehaviorSubject SteppersZEROed

    GroupWorkflow Cameras
        SubscribeSubject RigConfigs
        -> PropertyMapping(SerialNumber(Selector=SerialNumberCamera2))
        -> GroupWorkflow SpinnakerVideoSource(Description="Contains control and acquisition functionality for arena FLIR video capture devices.")
            ExternalizedMapping(Name(DisplayName=TriggerSource, Description="The PWM trigger source used to drive the camera."))
            -> SubscribeSubject CameraTriggerEvents => #1
            Disable ExternalizedMapping(Name(DisplayName=TriggerFrequency, Description="The frequency of the trigger source.")) => #2
            IntProperty(Value=50) => #3
            #2, #3 -> Disable SubscribeSubject<System.Double> GlobalTriggerFrequency => #4
            ExternalizedMapping
              Value
                DisplayName=ExposureTime
                Description="The duration of each individual exposure, in microseconds. To avoid trigger loss, values exceeding a period of 1 / frameRate - 1 millisecond will be capped."
            -> PropertySource<Aeon.Video.SpinnakerCapture,System.Double>(MemberName=ExposureTime, Value=19000) => #6
            #4, #6 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Math.Min(Item2, 1e6 / Item1 - 500)
            -> PropertyMapping(ExposureTime) => #9
            ExternalizedMapping(SerialNumber, Gain, Binning) => #10
            #1, #9, #10 -> Aeon.Video.SpinnakerCapture(Index=nil, SerialNumber=25366328, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #11
            ExternalizedMapping(Name(DisplayName=FrameEvents, Description="The name of the output sequence containing all frame events from the video source.")) => #12
            #11, #12 -> PublishSubject FrameEvents2
            -> WorkflowOutput

        SubscribeSubject RigConfigs
        -> PropertyMapping(SerialNumber(Selector=SerialNumberCamera1))
        -> GroupWorkflow SpinnakerVideoSource(Description="Contains control and acquisition functionality for arena FLIR video capture devices.")
            ExternalizedMapping(Name(DisplayName=TriggerSource, Description="The PWM trigger source used to drive the camera."))
            -> SubscribeSubject CameraTriggerEvents => #1
            Disable ExternalizedMapping(Name(DisplayName=TriggerFrequency, Description="The frequency of the trigger source.")) => #2
            IntProperty(Value=50) => #3
            #2, #3 -> Disable SubscribeSubject<System.Double> GlobalTriggerFrequency => #4
            ExternalizedMapping
              Value
                DisplayName=ExposureTime
                Description="The duration of each individual exposure, in microseconds. To avoid trigger loss, values exceeding a period of 1 / frameRate - 1 millisecond will be capped."
            -> PropertySource<Aeon.Video.SpinnakerCapture,System.Double>(MemberName=ExposureTime, Value=19000) => #6
            #4, #6 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Math.Min(Item2, 1e6 / Item1 - 500)
            -> PropertyMapping(ExposureTime) => #9
            ExternalizedMapping(SerialNumber, Gain, Binning) => #10
            #1, #9, #10 -> Aeon.Video.SpinnakerCapture(Index=nil, SerialNumber=25366318, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #11
            ExternalizedMapping(Name(DisplayName=FrameEvents, Description="The name of the output sequence containing all frame events from the video source.")) => #12
            #11, #12 -> PublishSubject FrameEvents1
            -> WorkflowOutput

        SubscribeSubject RigConfigs
        -> PropertyMapping(SerialNumber(Selector=SerialNumberCamera3))
        -> GroupWorkflow SpinnakerVideoSource(Description="Contains control and acquisition functionality for arena FLIR video capture devices.")
            ExternalizedMapping(Name(DisplayName=TriggerSource, Description="The PWM trigger source used to drive the camera."))
            -> SubscribeSubject CameraTriggerEvents => #1
            Disable ExternalizedMapping(Name(DisplayName=TriggerFrequency, Description="The frequency of the trigger source.")) => #2
            IntProperty(Value=50) => #3
            #2, #3 -> Disable SubscribeSubject<System.Double> GlobalTriggerFrequency => #4
            ExternalizedMapping
              Value
                DisplayName=ExposureTime
                Description="The duration of each individual exposure, in microseconds. To avoid trigger loss, values exceeding a period of 1 / frameRate - 1 millisecond will be capped."
            -> PropertySource<Aeon.Video.SpinnakerCapture,System.Double>(MemberName=ExposureTime, Value=19000) => #6
            #4, #6 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Math.Min(Item2, 1e6 / Item1 - 500)
            -> PropertyMapping(ExposureTime) => #9
            ExternalizedMapping(SerialNumber, Gain, Binning) => #10
            #1, #9, #10 -> Aeon.Video.SpinnakerCapture(Index=nil, SerialNumber=25366326, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #11
            ExternalizedMapping(Name(DisplayName=FrameEvents, Description="The name of the output sequence containing all frame events from the video source.")) => #12
            #11, #12 -> PublishSubject FrameEvents3
            -> WorkflowOutput

    BooleanProperty(Value=true)
    -> Delay(DueTime=PT1S)
    -> MulticastSubject StartCameras

    GroupWorkflow Zapit
      Description: Connects to the Zapit optogenetics server only when the session JSON enables optogenetics. Commands arrive on ZapitCommands, replies leave on ZapitReplies. Host and port come from RigConfigs. The session stops at startup if Zapit has no stimulus config loaded or its number of conditions differs from the session's stimulus config, and at any time if Zapit refuses a StartStimulus, and an optogenetics session with a real (non-TEST) animal stops at startup if this rig is not hardware-triggered.
      Workflow
        SubscribeSubject TaskParams
        -> MemberSelector(Selector=Optogenetics.Enabled)
        -> Take(Count=1)
        -> Condition OptogeneticsEnabled?
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany ConnectZapit
            WorkflowInput Source1

            SubscribeSubject RigConfigs
            -> PropertyMapping(Host(Selector=ZapitHost), Port(Selector=ZapitPort))
            -> IncludeWorkflow(Path=Extensions\Zapit.bonsai, Host=127.0.0.1, Port=1488, ReceiveTimeout=5000)
            -> WorkflowOutput

            SubscribeSubject ZapitReplies
            -> Condition ZapitError?
              Description: Any error reply from Zapit stops the session: a refused StartStimulus (arming or software start), a failed StopStimulus, or a failed query. Carrying on would log trials as stimulated (or stopped) that were not. Lives for the whole session. The StopStimulus sent when the workflow stops is read by ZapitClient itself.
              Workflow
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: IsError
                -> WorkflowOutput
            -> Format
              Format: Zapit answered {0} with an error (reply value {1}, laserOn {2}). Check the MATLAB window: is the stimulus config named in the session JSON loaded in Zapit, is Zapit calibrated, and is the DAQ working?
              Selector="Command,Value,LaserOn"
            -> ThrowError

            SubscribeSubject ZapitReplies
            -> Condition ConditionCountReply?
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: CommandCode == 4
                -> WorkflowOutput
            -> Take(Count=1) => #11
            SubscribeSubject TaskParams => #12
            #11, #12 -> WithLatestFrom
            -> CheckZapitConditionCount

            SubscribeSubject RigConfigs => #15
            SubscribeSubject TaskParams => #16
            #15, #16 -> Zip
            -> Condition SoftwareModeRealAnimal?
              Description: Software mode (RigConfigs ZapitHardwareTriggered = false) starts the laser when the command reaches Zapit, tens of ms late and with no onset timestamp. It is only for TEST animals and bench tests: an optogenetics session with a real animal stops here at startup unless the rig is hardware-triggered.
              Workflow
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: !Item1.ZapitHardwareTriggered && !Item2.LogConfig.AnimalId.ToUpperInvariant().StartsWith("TEST")
                -> WorkflowOutput
            -> Format
              Format: Optogenetics with a real animal ({0}) needs a hardware-triggered rig, and this rig is in Zapit software mode (RigConfigs ZapitHardwareTriggered = false). Cable behaviour board DO3 to the Zapit DAQ trigger input and set ZapitHardwareTriggered = true for this rig in src/Extensions/RigConfigs.cs. Software mode is only for TEST animals.
              Selector=Item2.LogConfig.AnimalId
            -> ThrowError

GroupWorkflow GUI
    Bonsai.Gui.LabelBuilder SessionTime(Enabled=true, Visible=true, Text=SessionTime)
    -> VisualizerMapping => #1
    SubscribeSubject sessionTime
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=00:39:39)
    -> VisualizerMapping => #5
    Bonsai.Gui.LabelBuilder Session_Animal(Enabled=true, Visible=true, Text=Session_Animal)
    -> VisualizerMapping => #7
    SubscribeSubject AnimalAndSessionID
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=A42_TC001)
    -> VisualizerMapping => #12
    Bonsai.Gui.LabelBuilder Modality(Enabled=true, Visible=true, Text=Modality)
    -> VisualizerMapping => #14
    SubscribeSubject Modality
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=A)
    -> VisualizerMapping => #19
    Bonsai.Gui.LabelBuilder ShapingStage(Enabled=true, Visible=true, Text=ShapingStage)
    -> VisualizerMapping => #21
    SubscribeSubject ShapingStage
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=5)
    -> VisualizerMapping => #26
    Bonsai.Gui.LabelBuilder TrialNumber(Enabled=true, Visible=true, Text=TrialNumber)
    -> VisualizerMapping => #28
    SubscribeSubject TrialNumber
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=245)
    -> VisualizerMapping => #33
    Bonsai.Gui.LabelBuilder LickCount(Enabled=true, Visible=true, Text=LickCount)
    -> VisualizerMapping => #35
    SubscribeSubject LickCount
    -> SampleInterval(Interval=PT0.1S)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=0)
    -> VisualizerMapping => #41
    Bonsai.Gui.LabelBuilder TrackLength(Enabled=true, Visible=true, Text="TrackLength (cm)")
    -> VisualizerMapping => #43
    SubscribeSubject TrackLength
    -> SampleInterval(Interval=PT0.1S)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=80)
    -> VisualizerMapping => #49
    Bonsai.Gui.LabelBuilder MouseVirtualPos(Enabled=true, Visible=true, Text="VirtualPos (cm)")
    -> VisualizerMapping => #51
    SubscribeSubject MouseVirtualPosition
    -> SampleInterval(Interval=PT0.1S)
    -> Format(Format={0:0.00}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=0.00)
    -> VisualizerMapping => #57
    Bonsai.Gui.LabelBuilder RewFloorPos(Enabled=true, Visible=true, Text="RewardFloor (cm)")
    -> VisualizerMapping => #59
    SubscribeSubject RewardFloorVirtualPos
    -> SampleInterval(Interval=PT0.1S)
    -> Format(Format={0:0.00}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=65.40)
    -> VisualizerMapping => #65
    Bonsai.Gui.LabelBuilder RewardCeilPos(Enabled=true, Visible=true, Text="RewardCeil (cm)")
    -> VisualizerMapping => #67
    SubscribeSubject RewardCeilVirtualPos
    -> SampleInterval(Interval=PT0.1S)
    -> Format(Format={0:0.00}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=76.08)
    -> VisualizerMapping => #73
    Bonsai.Gui.LabelBuilder CurrentAudFrequency(Enabled=true, Visible=true, Text="CurAudFreq (Hz)")
    -> VisualizerMapping => #75
    SubscribeSubject CurrFreq
    -> SampleInterval(Interval=PT1S)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=0)
    -> VisualizerMapping => #81
    Disable Bonsai.Gui.LabelBuilder RewardFreqFloor(Enabled=true, Visible=true, Text=RewardFreqFloor)
    -> Disable VisualizerMapping => #83
    Disable SubscribeSubject RewardFloorFreq
    -> Disable Format(Format={0}, Selector=it)
    -> Disable PropertyMapping(Text)
    -> Disable Bonsai.Gui.TextBoxBuilder RewardFreqFloor(Enabled=true, Visible=true, Text=14439, Multiline=false)
    -> Disable VisualizerMapping => #88
    Disable Bonsai.Gui.LabelBuilder RewardFreqCeil(Enabled=true, Visible=true, Text=RewardFreqCeil)
    -> Disable VisualizerMapping => #90
    Disable SubscribeSubject RewardCeilFreq
    -> Disable Format(Format={0}, Selector=it)
    -> Disable PropertyMapping(Text)
    -> Disable Bonsai.Gui.TextBoxBuilder RewardFreqCeil(Enabled=true, Visible=true, Text=22439, Multiline=false)
    -> Disable VisualizerMapping => #95
    Bonsai.Gui.LabelBuilder CurrentVisFreq(Enabled=true, Visible=true, Text="CurrentVisFreq (deg)")
    -> VisualizerMapping => #97
    SubscribeSubject CurrFreqV
    -> SampleInterval(Interval=PT1S)
    -> Format(Format={0:0.00}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=0.00)
    -> VisualizerMapping => #103
    Bonsai.Gui.LabelBuilder SuccessRate(Enabled=true, Visible=true, Text="Success rate")
    -> VisualizerMapping => #105
    SubscribeSubject SuccessRateText
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="43% (105/244)")
    -> VisualizerMapping => #110
    Bonsai.Gui.LabelBuilder TrialsSinceReward(Enabled=true, Visible=true, Text="Trials since reward")
    -> VisualizerMapping => #112
    SubscribeSubject TrialsSinceRewardText
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=38)
    -> VisualizerMapping => #117
    Bonsai.Gui.LabelBuilder TimeSinceReward(Enabled=true, Visible=true, Text="Time since reward")
    -> VisualizerMapping => #119
    SubscribeSubject TimeSinceRewardText
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=00:05:50)
    -> VisualizerMapping => #124
    Bonsai.Gui.LabelBuilder EngagementLabel(Enabled=true, Visible=true, Text=Engagement)
    -> VisualizerMapping => #126
    SubscribeSubject EngagementText
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=Disengaged)
    -> VisualizerMapping => #131
    Bonsai.Gui.LabelBuilder EngagementEpoch(Enabled=true, Visible=true, Text="Epoch length")
    -> VisualizerMapping => #133
    SubscribeSubject EngagementEpochText
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="25 trials / 00:04:02")
    -> VisualizerMapping => #138
    Bonsai.Gui.LabelBuilder SessionEngaged(Enabled=true, Visible=true, Text="Session engaged")
    -> VisualizerMapping => #140
    SubscribeSubject SessionEngagedText
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="67% (155/232)")
    -> VisualizerMapping => #145
    Bonsai.Gui.LabelBuilder EngagedSuccess(Enabled=true, Visible=true, Text="Engaged success")
    -> VisualizerMapping => #147
    SubscribeSubject EngagedSuccessText
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="68% (105/155)")
    -> VisualizerMapping => #152
    Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Text=Start)
    -> PublishSubject StartSession
    -> VisualizerMapping => #159
    SubscribeSubject FrameEvents3
    -> SampleInterval(Interval=PT0.1S)
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Flip(Mode=Both)
    -> VisualizerMapping => #164
    SubscribeSubject FrameEvents1
    -> SampleInterval(Interval=PT0.1S)
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Flip(Mode=Both)
    -> VisualizerMapping => #169
    SubscribeSubject FrameEvents2
    -> SampleInterval(Interval=PT0.1S)
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Flip(Mode=Both)
    -> VisualizerMapping => #174
    SubscribeSubject WheelDistanceCm
    -> SampleInterval(Interval=PT0.1S) => #176
    -> Skip(Count=1) => #177
    #177, #176 -> Zip
    -> Subtract
    -> Multiply(Operand=DoubleProperty(Value=1))
    -> VisualizerMapping => #181
    #164, #169, #174, #181 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=4
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=Cameras)
    -> VisualizerMapping => #185
    Bonsai.Gui.LabelBuilder Left(Enabled=true, Visible=true, Text=Left)
    -> VisualizerMapping => #187
    Bonsai.Gui.LabelBuilder Right(Enabled=true, Visible=true, Text=Right)
    -> VisualizerMapping => #189
    Annotation "Motor1 UP"(Text="Motor1 UP")
    -> Bonsai.Gui.ButtonBuilder "Left UP"(Enabled=true, Visible=true, Text=↑)
    -> PublishSubject Motor4_UP
    -> VisualizerMapping => #193
    SubscribeSubject StepperPosition_BothIn
    -> Format(Format="{0},{1},{2},{3},{4};", Selector="Item1,Item2,Item3,Item4,Item5")
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="1150,6400,4700,650,950;")
    -> VisualizerMapping => #198
    Bonsai.Gui.ButtonBuilder "Right UP"(Enabled=true, Visible=true, Text=↑)
    -> PublishSubject Motor5_UP
    -> VisualizerMapping => #201
    Annotation "Motor1 DOWN"(Text="Motor1 DOWN")
    -> Bonsai.Gui.ButtonBuilder "Left DOWN"(Enabled=true, Visible=true, Text=↓)
    -> PublishSubject Motor4_DOWN
    -> VisualizerMapping => #205
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #207
    Bonsai.Gui.ButtonBuilder "Right DOWN"(Enabled=true, Visible=true, Text=↓)
    -> PublishSubject Motor5_DOWN
    -> VisualizerMapping => #210
    Bonsai.Gui.ButtonBuilder "Left FRONT"(Enabled=true, Visible=true, Text=↙)
    -> PublishSubject Motor2_UP
    -> VisualizerMapping => #213
    Bonsai.Gui.ButtonBuilder "Left BACK"(Enabled=true, Visible=true, Text=↗)
    -> PublishSubject Motor2_DOWN
    -> VisualizerMapping => #216
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #218
    Bonsai.Gui.ButtonBuilder "Right BACK"(Enabled=true, Visible=true, Text=↖)
    -> PublishSubject Motor3_DOWN
    -> VisualizerMapping => #221
    Bonsai.Gui.ButtonBuilder "Right FRONT"(Enabled=true, Visible=true, Text=↘)
    -> PublishSubject Motor3_UP
    -> VisualizerMapping => #224
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #226
    Bonsai.Gui.ButtonBuilder "Base LEFT"(Enabled=true, Visible=true, Text=←)
    -> PublishSubject Motor1_UP
    -> VisualizerMapping => #229
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #231
    Bonsai.Gui.ButtonBuilder "Base RIGHT"(Enabled=true, Visible=true, Text=→)
    -> PublishSubject Motor1_DOWN
    -> VisualizerMapping => #234
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #236
    Bonsai.Gui.ButtonBuilder HOME(Enabled=true, Visible=true, Text="ZERO (Home)")
    -> PublishSubject GUICallbackStepperHOME
    -> VisualizerMapping => #239
    Bonsai.Gui.ButtonBuilder IN(Enabled=true, Visible=true, Text=IN)
    -> PublishSubject GUICallbackStepperIN
    -> VisualizerMapping => #242
    Bonsai.Gui.ButtonBuilder OUT(Enabled=true, Visible=true, Text=OUT)
    -> PublishSubject GUICallbackStepperOUT
    -> VisualizerMapping => #245
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #247
    Bonsai.Gui.LabelBuilder StepSize(Enabled=true, Visible=true, Text=StepSize)
    -> VisualizerMapping => #249
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #251
    SubscribeSubject StepperStepSize
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToString(it)
    -> Take(Count=1)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder StepSize(Enabled=true, Visible=true, Text=300, Multiline=false) => #256
    -> VisualizerMapping => #257
    #187, #189, #193, #198, #201, #205, #207, #210, #213, #216, #218, #221, #224, #226, #229, #231, #234, #236, #239, #242, #245, #247, #249, #251, #257 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=5
      RowCount=7
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=4, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=4, RowSpan=1)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Spout Position")
    -> VisualizerMapping => #261
    #256 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> MulticastSubject StepperStepSize
    Bonsai.Gui.LabelBuilder Left(Enabled=true, Visible=true, Text="Left Valve")
    -> VisualizerMapping => #263
    Bonsai.Gui.LabelBuilder Right(Enabled=true, Visible=true, Text="Right Valve")
    -> VisualizerMapping => #265
    Bonsai.Gui.ButtonBuilder "LEFT FLUSH"(Enabled=true, Visible=true, Text="LEFT FLUSH")
    -> PublishSubject GUI_Callback_Left_flush
    -> VisualizerMapping => #268
    Bonsai.Gui.ButtonBuilder "RIGHT FLUSH"(Enabled=true, Visible=true, Text="RIGHT FLUSH")
    -> PublishSubject GUI_Callback_Right_flush
    -> VisualizerMapping => #271
    Bonsai.Gui.ButtonBuilder SaveSpoutPositions(Enabled=true, Visible=true, Text="SAVE POSITIONS")
    -> PublishSubject SaveSpoutPositions
    -> VisualizerMapping => #274
    #263, #265, #268, #271, #274 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Spout Position")
    -> VisualizerMapping => #278
    Bonsai.Gui.LabelBuilder TruncationPoint(Enabled=true, Visible=true, Text="TruncationPoint (1 = none)")
    -> VisualizerMapping => #291
    SubscribeSubject TruncationPoint
    -> SampleInterval(Interval=PT0.1S)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=1)
    -> VisualizerMapping => #297
    Bonsai.Gui.LabelBuilder NormAudFreq(Enabled=true, Visible=true, Text="NormAudFreq (0-1)")
    -> VisualizerMapping => #299
    SubscribeSubject CurrFreq
    -> SampleInterval(Interval=PT0.1S) => #301
    SubscribeSubject TaskParams => #302
    #301, #302 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform NormAudFreq
      Expression: Convert.ToDouble(it.Item1) <= 0 ? 0.0 : Math.Log(Convert.ToDouble(it.Item1) / Convert.ToDouble(it.Item2.StartFreq)) / Math.Log(Convert.ToDouble(it.Item2.EndFreq) / Convert.ToDouble(it.Item2.StartFreq))
    -> Format(Format={0:0.00}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=0.00)
    -> VisualizerMapping => #308
    #1, #5, #7, #12, #14, #19, #21, #26, #28, #33, #35, #41, #43, #49, #291, #297, #299, #308, #51, #57, #59, #65, #67, #73, #75, #81, #83, #88, #90, #95, #97, #103, #105, #110, #112, #117, #119, #124, #126, #131, #133, #138, #140, #145, #147, #152 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=21, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #156
    #156, #159, #185, #261, #278 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=5
      RowCount=4
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=2)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=4)
        CellSpan(ColumnSpan=1, RowSpan=3)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)

    Timer(DueTime=PT0S, Period=PT1S)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it).ToString()
    -> BehaviorSubject sessionTime => #284
    SubscribeSubject StartSession
    -> Disable Skip(Count=1) => #286
    #284, #286 -> SubscribeWhen

    IntProperty(Value=300)
    -> BehaviorSubject StepperStepSize

GroupWorkflow "GUI Callbacks"
    GroupWorkflow ValveGUICallbacks(Description=ValveGUICallbacks)
        SubscribeSubject GUI_Callback_Left_flush
        -> IntProperty(Value=1) => #1
        SubscribeSubject GUI_Callback_Right_flush
        -> IntProperty(Value=2) => #3
        #1, #3 -> Merge
        -> MulticastSubject TriggerValve
        -> WorkflowOutput

    GroupWorkflow StepperMotorGUICallbacks(Description=StepperMotorGUICallbacks)
        Annotation "Update Motor IN position data"(Text="Update Motor IN position data")

        GroupWorkflow "Internal Position Update"(Description="Internal Position Update")
            Annotation "Sample when any input emits"(Text="Sample when any input emits")

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #2
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position => #4
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position => #6
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position => #8
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position => #10
            Annotation "Grab all latest inputs"(Text="Grab all latest inputs") => #11
            #2, #4, #6, #8, #10, #11 -> CombineLatest => #12
            Annotation "Store IN position"(Text="Store IN position") => #13
            #12, #13 -> MulticastSubject StepperPosition_BothIn => #14
            Annotation "Sends command with every update"(Text="Sends command with every update") => #15
            #14, #15 -> MulticastSubject StepperPositionCommand => #16
            GroupWorkflow "Init Positions"(Description="Init Positions") => #17
                Annotation Motor1_IN_position(Text=Motor1_IN_position) => #0
                SubscribeSubject RigConfigs
                -> PropertyMapping(Value(Selector=Motor1InPosition)) => #2
                #0, #2 -> IntProperty(Value=3550)
                -> BehaviorSubject Motor1_Position => #4
                Annotation Motor2_IN_position(Text=Motor2_IN_position) => #5
                SubscribeSubject RigConfigs
                -> PropertyMapping(Value(Selector=Motor2InPosition)) => #7
                #5, #7 -> IntProperty(Value=5500)
                -> BehaviorSubject Motor2_Position => #9
                Annotation Motor3_IN_position(Text=Motor3_IN_position) => #10
                SubscribeSubject RigConfigs
                -> PropertyMapping(Value(Selector=Motor3InPosition)) => #12
                #10, #12 -> IntProperty(Value=4700)
                -> BehaviorSubject Motor3_Position => #14
                Annotation Motor4_IN_position(Text=Motor4_IN_position) => #15
                SubscribeSubject RigConfigs
                -> PropertyMapping(Value(Selector=Motor4InPosition)) => #17
                #15, #17 -> IntProperty(Value=2150)
                -> BehaviorSubject Motor4_Position => #19
                Annotation Motor5_IN_position(Text=Motor5_IN_position) => #20
                SubscribeSubject RigConfigs
                -> PropertyMapping(Value(Selector=Motor5InPosition)) => #22
                #20, #22 -> IntProperty(Value=950)
                -> BehaviorSubject Motor5_Position => #24
                #4, #9, #14, #19, #24 -> Merge
                -> WorkflowOutput
            #16, #17 -> SubscribeWhen
            #6 -> Subtract(Operand=IntProperty(Value=1000)) => #19
            #8 -> Subtract(Operand=IntProperty(Value=1000)) => #20
            #2, #4, #19, #20, #10 -> CombineLatest
            -> Disable Format(Format="{0},{1},{2},{3},{4};", Selector="Item1,Item2,Item3,Item4,Item5")
            -> MulticastSubject StepperPosition_BothOut

        Annotation "ZERO, IN, OUT commands"(Text="ZERO, IN, OUT commands")

        GroupWorkflow "Position Callbacks"(Description="Position Callbacks. Overall: ZERO, IN, OUT")
            SubscribeSubject GUICallbackStepperHOME => #0
            Annotation HomePosition(Text=HomePosition)
            -> SubscribeSubject StepperPosition_HOME => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject GUICallbackStepperIN => #6
            Annotation INPosition(Text=INPosition)
            -> SubscribeSubject StepperPosition_BothIn => #8
            #6, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject GUICallbackStepperOUT => #12
            Annotation OUTPosition(Text=OUTPosition)
            -> SubscribeSubject StepperPosition_BothOut => #14
            #12, #14 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

        Annotation "Individual Motor Callbacks"(Text="Individual Motor Callbacks")

        SubscribeSubject StepperStepSize => #5
        -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor1
            SubscribeSubject Motor1_UP => #0
            SubscribeSubject Motor1_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=300) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor1_Position
            SubscribeSubject Motor1_DOWN => #9
            SubscribeSubject Motor1_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=300) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor1_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor2
            SubscribeSubject Motor2_UP => #0
            SubscribeSubject Motor2_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=300) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor2_Position
            SubscribeSubject Motor2_DOWN => #9
            SubscribeSubject Motor2_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=300) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor2_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor3
            SubscribeSubject Motor3_UP => #0
            SubscribeSubject Motor3_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=300) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor3_Position
            SubscribeSubject Motor3_DOWN => #9
            SubscribeSubject Motor3_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=300) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor3_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor4
            SubscribeSubject Motor4_UP => #0
            SubscribeSubject Motor4_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=300) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor4_Position
            SubscribeSubject Motor4_DOWN => #9
            SubscribeSubject Motor4_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=300) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor4_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor5
            SubscribeSubject Motor5_UP => #0
            SubscribeSubject Motor5_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=300) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor5_Position
            SubscribeSubject Motor5_DOWN => #9
            SubscribeSubject Motor5_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=300) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor5_Position

        Annotation "Saved spout positions"(Text="Saved spout positions")

        GroupWorkflow SpoutPositions
          Description: Remembers where the lick spout sits for each animal. Positions are read back when a session starts and written whenever the SAVE POSITIONS button is pressed, so an animal returns to the spout position it was last set to. One file per animal in a rig-local folder, matching the av-dome workflow, which drives the same motors on this rig and reads the same files.
          Workflow
            Annotation "File is set once the motors have been ZEROed"
              Text:
                One file per animal, named after the animal ID. Waiting for the motors to be ZEROed
                means a saved position is never applied against an unknown motor origin.
            -> StringProperty(Value=C:\RigConfigs\LickSpoutPositions\) => #1
            SubscribeSubject SteppersZEROed => #2
            SubscribeSubject AnimalID => #3
            #2, #3 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Take(Count=1) => #6
            #1, #6 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform SpoutPositionFilePath
              Expression: it.Item1+it.Item2+".csv"
            -> Take(Count=1)
            -> BehaviorSubject SpoutPositionFileName

            Annotation "Restore the saved positions for this animal"(Text="If the animal has no file yet, the defaults in Init Positions are left alone.")

            SubscribeSubject SpoutPositionFileName
            -> SelectMany ReadPositions
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject _fName

                SubscribeSubject _fName
                -> PropertyMapping(FileName) => #4
                SubscribeSubject _fName
                -> FileExists
                -> Condition FileFound? => #7
                    WorkflowInput Source1
                    -> WorkflowOutput
                #4, #7 -> SelectMany LoadSpoutPositions
                    ExternalizedMapping(FileName)
                    -> Bonsai.IO.CsvReader(FileName=C:\RigConfigs\LickSpoutPositions\TC001.csv, ScanPattern="%i,%i,%i,%i,%i", SkipRows=0) => #1
                    -> MemberSelector(Selector=Item1)
                    -> MulticastSubject Motor1_Position => #3
                    #1 -> MemberSelector(Selector=Item2)
                    -> MulticastSubject Motor2_Position => #5
                    #1 -> MemberSelector(Selector=Item3)
                    -> MulticastSubject Motor3_Position => #7
                    #1 -> MemberSelector(Selector=Item4)
                    -> MulticastSubject Motor4_Position => #9
                    #1 -> MemberSelector(Selector=Item5)
                    -> MulticastSubject Motor5_Position => #11
                    #3, #5, #7, #9, #11 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput

                    WorkflowInput Source1
                -> WorkflowOutput

            Annotation "Save on button press"(Text="Writes the five current motor positions, overwriting this animal's file.")

            SubscribeSubject SpoutPositionFileName
            -> PropertyMapping(FileName) => #16
            SubscribeSubject SaveSpoutPositions => #17
            SubscribeSubject SpoutPositionFileName => #18
            #17, #18 -> SubscribeWhen => #19
            #16, #19 -> SelectMany WritePositions
                SubscribeSubject Motor1_Position => #0
                SubscribeSubject Motor2_Position => #1
                SubscribeSubject Motor3_Position => #2
                SubscribeSubject Motor4_Position => #3
                SubscribeSubject Motor5_Position => #4
                #0, #1, #2, #3, #4 -> Zip
                -> Format(Format="{0},{1},{2},{3},{4}", Selector="Item1,Item2,Item3,Item4,Item5") => #6
                ExternalizedMapping(FileName) => #7
                #6, #7 -> Bonsai.IO.CsvWriter
                  FileName=C:\RigConfigs\LickSpoutPositions\TC001.csv
                  Delimiter=","
                  ListSeparator=;
                  Append=false
                  Overwrite=true
                  Suffix=None
                  IncludeHeader=false
                  Selector=it
                -> Take(Count=1)
                -> WorkflowOutput

                WorkflowInput Source1

GroupWorkflow Params(Description=Params)
    ExternalizedMapping(Path(DisplayName=TaskPath))
    -> Bonsai.IO.ReadAllText(Path=../session-schemas/current-session/UclOpenAuditoryVrCorridorTaskLogic.json)
    -> UclOpenAuditoryVrCorridorDataSchema.DeserializeFromJson(Type=TypeMapping<UclOpenAuditoryVrCorridorDataSchema.UclOpenAuditoryVrCorridorTaskLogic>)
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskParams

    Disable ExternalizedMapping(Value(DisplayName=Modality))
    -> Disable StringProperty(Value=AV)
    -> Disable BehaviorSubject Modality

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=Modality)
    -> BehaviorSubject Modality

    GroupWorkflow InitVars => #11
        GroupWorkflow VisParams
            SubscribeSubject TaskParams => #0
            -> MemberSelector(Selector=StartFreq) => #1
            #0 -> MemberSelector(Selector=EndFreq) => #2
            #1, #2 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform Start-End-Multiple => #4
              Expression: it.item2/it.Item1
            SubscribeSubject StartFreqV => #5
            SubscribeSubject EndFreqV => #6
            #5, #6 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform Start-End-Multiple => #8
              Expression: it.item2/it.Item1
            #4, #8 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform Aud-Over-Vis-Multiple
              Expression: it.item1/it.Item2
            -> BehaviorSubject VisToAudMultiple

            Disable SubscribeSubject DrawStimuli
            -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=0
              LocationY=0
              Layer=0
              Angle=90
              ColorR=0.5
              ColorG=0.5
              ColorB=0.5
              ColorA=1

            Disable SubscribeSubject DrawStimuli
            -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=10
              Layer=0
              ExtentX=180
              ExtentY=60
              SpatialFrequency=0.06
              TemporalFrequency=0
              Phase=0
              Angle=90
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=100
              Aperture=0
              Opacity=1

            DoubleProperty(Value=0.03)
            -> BehaviorSubject StartFreqV

            DoubleProperty(Value=0.3)
            -> BehaviorSubject EndFreqV

            DoubleProperty(Value=0)
            -> BehaviorSubject CurrPhase

            DoubleProperty(Value=0)
            -> BehaviorSubject CurrFreqV

            DoubleProperty(Value=1)
            -> BehaviorSubject Opacity

            DoubleProperty(Value=1)
            -> BehaviorSubject CurrOpacity

        GroupWorkflow InitVars
            BehaviorSubject<System.TimeSpan> InterTrialInterval
            BehaviorSubject<System.Double> AudAmplitude
            BehaviorSubject<System.Int64> BeepTimer
            BehaviorSubject<System.Double> TrackLength
            BehaviorSubject<System.Double> RewardFloorFreq
            BehaviorSubject<System.Double> RewardCeilFreq
            BehaviorSubject<System.Double> RewardFloorVirtualPos
            BehaviorSubject<System.Double> RewardCeilVirtualPos
            BehaviorSubject<System.Double> TrialEndFreq
            BehaviorSubject<System.Double> TrialEndFreqV
            BehaviorSubject<System.Boolean> TrialEnded
            BehaviorSubject<OpenCV.Net.Mat> Buffer
            BehaviorSubject<OpenCV.Net.Mat> RewardBuffer
            BehaviorSubject<OpenCV.Net.Mat> ErrorBuffer

            GroupWorkflow StepperDriverParams
                Annotation StepperPosition_BothIn(Text=StepperPosition_BothIn)
                -> IntProperty(Value=6000) => #1
                IntProperty(Value=4000) => #2
                IntProperty(Value=6000) => #3
                IntProperty(Value=9000) => #4
                IntProperty(Value=9500) => #5
                #1, #2, #3, #4, #5 -> Zip => #6
                -> BehaviorSubject StepperPosition_BothIn
                Annotation StepperPosition_BothOut(Text=StepperPosition_BothOut) => #8
                #6, #8 -> BehaviorSubject StepperPosition_BothOut

                IntProperty(Value=0) => #10
                IntProperty(Value=0) => #11
                IntProperty(Value=0) => #12
                IntProperty(Value=0) => #13
                IntProperty(Value=0) => #14
                #10, #11, #12, #13, #14 -> Zip => #15
                -> Delay(DueTime=PT3S)
                -> BehaviorSubject StepperPositionCommand
                #15 -> BehaviorSubject StepperPosition_HOME

            SubscribeSubject TaskParams => #15
            -> MemberSelector(Selector=Amplitude) => #16
            Annotation(Text="Rescales Amplitude to 1 or 0 Depending on if AudioStimActive is True or False")
            -> SubscribeSubject AudioStimActive
            -> PropertyMapping(Value) => #19
            #16, #19 -> Multiply(Operand=DoubleProperty(Value=1))
            -> MulticastSubject AudAmplitude
            -> PropertyMapping(RangeMax) => #22
            Bonsai.Dsp.MatrixReader(Path=./waveforms/all_waveforms.bin, Offset=0, SampleRate=48000, ChannelCount=1, BufferLength=2400, Depth=F32, Layout=RowMajor) => #23
            #22, #23 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear) => #24
            #15 -> MemberSelector(Selector=NFreqBins)
            -> PropertyMapping(Count) => #26
            #24, #26 -> Take(Count=100)
            -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1)
            -> ToList
            -> AsyncSubject WaveformDict

            IntProperty(Value=0) => #31
            -> BehaviorSubject LickCount
            #31 -> BehaviorSubject TrialNumber
            #31 -> BehaviorSubject CurrFreq

            BooleanProperty(Value=false)
            -> BehaviorSubject WasRewarded

            BooleanProperty(Value=false)
            -> BehaviorSubject WasTimeout

            BooleanProperty(Value=false)
            -> BehaviorSubject HitEndOfTrack

            TimeSpanProperty(Value=PT12S)
            -> BehaviorSubject MaxTrialTimeSec

            DoubleProperty(Value=0)
            -> BehaviorSubject StartTime

            DoubleProperty(Value=0)
            -> BehaviorSubject TrialStartWheelDistance

            Disable DoubleProperty(Value=0)
            -> Disable BehaviorSubject CurrAmp

            DoubleProperty(Value=500)
            -> BehaviorSubject DriftBeepsTillEnd

            DoubleProperty(Value=0)
            -> BehaviorSubject TrialDistFloor

            BehaviorSubject<System.Double> TrialActive

            DoubleProperty(Value=1)
            -> BehaviorSubject TruncationPoint

            DoubleProperty(Value=1)
            -> BehaviorSubject CueActive

            BehaviorSubject<System.Int32> AudBin

            Annotation "ErrorTone loaded once"
              Text: Read into memory once at startup instead of from disk on every punishment, so the relative path cannot fail mid-session if the working directory changes and crash the workflow on an error trial.

            Bonsai.Audio.AudioReader(FileName=waveforms\error_tone.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> AsyncSubject ErrorTone

            Annotation Optogenetics
              Text: Zapit optogenetics, only used when the session JSON enables it. ZapitCommands go to the Zapit group in Devices, which answers on ZapitReplies. OptoTrial is what Zapit is asked to do on the current trial (laser on or sham, and which condition), drawn at ITI start in TaskLogic/BeepTimer.

            BehaviorSubject<ZapitCommand> ZapitCommands
            BehaviorSubject<ZapitReply> ZapitReplies
            BehaviorSubject<OptoTrial> OptoTrial
    SubscribeSubject Modality => #12
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToDouble((it == "A" || it == "AV"))
    -> BehaviorSubject AudioStimActive => #14
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToDouble((it == "V" || it == "AV"))
    -> BehaviorSubject VisualStimActive => #16
    #14, #16 -> Zip => #17
    #11, #17 -> SubscribeWhen

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ShapingStage)
    -> BehaviorSubject ShapingStage

    Disable ExternalizedMapping(Value(DisplayName=ShapingStage))
    -> Disable IntProperty(Value=6)
    -> Disable BehaviorSubject ShapingStage

    Disable GroupWorkflow Old
        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage1.Floor)
        -> Disable BehaviorSubject Stage1FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage1.Ceiling)
        -> Disable BehaviorSubject Stage1CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage2.Floor)
        -> Disable BehaviorSubject Stage2FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage2.Ceiling)
        -> Disable BehaviorSubject Stage2CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage3.Floor)
        -> Disable BehaviorSubject Stage3FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage3.Ceiling)
        -> Disable BehaviorSubject Stage3CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=Amplitude)
        -> Disable BehaviorSubject Amplitude

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=Punishment.TimeoutSec)
        -> Disable BehaviorSubject PunishmentTimeoutSec

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage4.Floor)
        -> Disable BehaviorSubject Stage4FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage4.Ceiling)
        -> Disable BehaviorSubject Stage4CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=NFreqBins)
        -> Disable BehaviorSubject NFreqBins

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage5.Floor)
        -> Disable BehaviorSubject Stage5FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=QuantizeBinSize)
        -> Disable BehaviorSubject QuantizeBinSize

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=StartFreq)
        -> Disable BehaviorSubject StartFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=EndFreq)
        -> Disable BehaviorSubject EndFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage5.Ceiling)
        -> Disable BehaviorSubject Stage5CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage6.Floor)
        -> Disable BehaviorSubject Stage6FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage6.Ceiling)
        -> Disable BehaviorSubject Stage6CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=Punishment.Stage4PunishedLick)
        -> Disable BehaviorSubject Stage4PunishedLick

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=Punishment.Stage5PunishedLick)
        -> Disable BehaviorSubject Stage5PunishedLick

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=Punishment.Stage6PunishedLick)
        -> Disable BehaviorSubject Stage6PunishedLick

    Annotation RigConfigs(Text="Hardware addresses and calibrations for whichever rig this is - see Extensions/RigConfigs.cs")
    -> StringProperty(Value="")
    -> RigConfigs
    -> Take(Count=1)
    -> AsyncSubject RigConfigs

GroupWorkflow ComputeRewardZone
    SubscribeSubject TaskParams
    -> Bonsai.Scripting.Expressions.ExpressionTransform ComputeThreshold
      Expression: it.ShapingStage == 1 ? Convert.ToDouble(it.ThresholdFrequencies.Stage1.Floor) : it.ShapingStage == 2 ? Convert.ToDouble(it.ThresholdFrequencies.Stage2.Floor) : it.ShapingStage == 3 ? Convert.ToDouble(it.ThresholdFrequencies.Stage3.Floor) : it.ShapingStage == 4 ? Convert.ToDouble(it.ThresholdFrequencies.Stage4.Floor) :  Convert.ToDouble(it.ThresholdFrequencies.Stage5.Floor)
    -> MulticastSubject RewardFloorFreq

    SubscribeSubject TaskParams
    -> Bonsai.Scripting.Expressions.ExpressionTransform ComputeThreshold
      Expression: it.ShapingStage == 1 ? Convert.ToDouble(it.ThresholdFrequencies.Stage1.Ceiling) : it.ShapingStage == 2 ? Convert.ToDouble(it.ThresholdFrequencies.Stage2.Ceiling) : it.ShapingStage == 3 ? Convert.ToDouble(it.ThresholdFrequencies.Stage3.Ceiling) : it.ShapingStage == 4 ? Convert.ToDouble(it.ThresholdFrequencies.Stage4.Ceiling) :  Convert.ToDouble(it.ThresholdFrequencies.Stage5.Ceiling)
    -> MulticastSubject RewardCeilFreq

    SubscribeSubject TrackLength => #6
    SubscribeSubject TaskParams => #7
    -> MemberSelector(Selector=StartFreq) => #8
    #7 -> MemberSelector(Selector=EndFreq) => #9
    SubscribeSubject RewardFloorFreq => #10
    #6, #8, #9, #10 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform RewardFloorVirtualPos
      Expression: it.Item1 * Math.Log(it.Item4 / it.Item2) / Math.Log(it.Item3 / it.Item2)
    -> MulticastSubject RewardFloorVirtualPos

    SubscribeSubject TrackLength => #14
    SubscribeSubject TaskParams => #15
    -> MemberSelector(Selector=StartFreq) => #16
    #15 -> MemberSelector(Selector=EndFreq) => #17
    SubscribeSubject RewardCeilFreq => #18
    #14, #16, #17, #18 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform RewardCeilVirtualPos
      Expression: it.Item1 * Math.Log(it.Item4 / it.Item2) / Math.Log(it.Item3 / it.Item2)
    -> MulticastSubject RewardCeilVirtualPos

GroupWorkflow LickCounter(Description="Increments lick count on each lick")
    SubscribeSubject LickStateLeft
    -> Condition => #1
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject LickCount => #2
    #1, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject LickCount
    -> WorkflowOutput

GroupWorkflow TaskState
    Timer(DueTime=PT0S, Period=PT0.25S) => #0
    SubscribeSubject ShapingStage => #1
    #0, #1 -> WithLatestFrom => #2
    SubscribeSubject TrialNumber => #3
    #2, #3 -> WithLatestFrom => #4
    SubscribeSubject InterTrialInterval => #5
    #4, #5 -> WithLatestFrom => #6
    SubscribeSubject WheelDistanceCm => #7
    #6, #7 -> WithLatestFrom => #8
    SubscribeSubject TrialDistance => #9
    #8, #9 -> WithLatestFrom => #10
    SubscribeSubject MouseVirtualPosition => #11
    #10, #11 -> WithLatestFrom => #12
    SubscribeSubject CurrFreq => #13
    #12, #13 -> WithLatestFrom => #14
    SubscribeSubject TrackLength => #15
    #14, #15 -> WithLatestFrom => #16
    SubscribeSubject RewardFloorFreq => #17
    #16, #17 -> WithLatestFrom => #18
    SubscribeSubject RewardCeilFreq => #19
    #18, #19 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        "Stage:" + it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.ToString() +
        " Trial:" + it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.ToString() +
        " ITI:" + it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.TotalSeconds.ToString("F0") + "s" + " TotDist:" + Convert.ToInt32(it.Item1.Item1.Item1.Item1.Item1.Item1.Item2).ToString() + "cm" +
        " TrialDist:" + Convert.ToInt32(it.Item1.Item1.Item1.Item1.Item1.Item2).ToString() + "cm" +
        " Position:" + Convert.ToInt32(it.Item1.Item1.Item1.Item1.Item2).ToString() + "cm" +
        " Freq:" + Convert.ToInt32(it.Item1.Item1.Item1.Item2).ToString() + "Hz" +
        " Track:" + Convert.ToInt32(it.Item1.Item1.Item2).ToString() + "cm" +
        " Zone:" + Convert.ToInt32(it.Item1.Item2).ToString() + "-" + Convert.ToInt32(it.Item2).ToString() + "Hz"
    -> WorkflowOutput

GroupWorkflow Logging
    GroupWorkflow TaskSchemaLogger
        SubscribeSubject TaskParams
        -> UclOpenAuditoryVrCorridorDataSchema.SerializeToJson(Formatting=None)
        -> Delay(DueTime=PT1S)
        -> GroupWorkflow TaskSchemaLog
            Disable WorkflowInput Source2 => #0
            Disable ExternalizedMapping(Name)
            -> Disable GroupWorkflow FormatFileName
                SubscribeSubject PathPrefix => #0
                WorkflowInput Source1 => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
                #1, #2 -> StringProperty(Value=TaskSchemaLog) => #3
                SubscribeSubject AnimalAndSessionID => #4
                #3, #4 -> Zip
                -> Format(Format={0}_{1}_, Selector="Item1, Item2")
                -> Take(Count=1) => #7
                -> UclOpen.Core.StripSubstring => #8
                StringProperty(Value=json)
                -> Take(Count=1) => #10
                #0, #8, #7, #10 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                -> WorkflowOutput
            -> Disable PropertyMapping(Path) => #3
            #0, #3 -> Disable UclOpen.Logging.JsonWriter
              Path: c:\Users\CoenL\Documents\TomC\auditory-vr-corridor\Logs\sub-r2d2\ses-newest_date-2026-03-05T17-50-13\TaskSchemaLog_newest_r2d2_\TaskSchemaLog_newest_r2d2_.json
              Suffix=Timestamp
              Overwrite=false
            -> Disable WorkflowOutput

            ExternalizedMapping(Name)
            -> GroupWorkflow FormatFileName
                SubscribeSubject PathPrefix => #0
                WorkflowInput Source1 => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
                #1, #2 -> StringProperty(Value=TaskSchemaLog) => #3
                SubscribeSubject AnimalAndSessionID => #4
                #3, #4 -> Zip
                -> Format(Format={0}_{1}_, Selector="Item1, Item2")
                -> Take(Count=1) => #7
                -> UclOpen.Core.StripSubstring => #8
                StringProperty(Value=json)
                -> Take(Count=1) => #10
                #0, #8, #7, #10 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                -> WorkflowOutput
            -> PropertyMapping(Path) => #8
            WorkflowInput Source1 => #9
            #8, #9 -> UclOpen.Loggingv2.JsonWriter
              Path=C:\dev\auditory-vr-corridor\Logs\sub-TC001\ses-A42_date-2026-09-23T13-48-00\TaskSchemaLog_A42_TC001_\TaskSchemaLog_A42_TC001_.json
              Suffix=None
              Overwrite=false
            -> WorkflowOutput

    GroupWorkflow TrialLogger
        SubscribeSubject TrialEnded
        -> Condition IsTrialEnded?
            WorkflowInput Source1
            -> WorkflowOutput
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Format(Format={0:F2}, Selector="") => #4
        SubscribeSubject Modality => #5
        #4, #5 -> WithLatestFrom => #6
        SubscribeSubject TrialNumber => #7
        #6, #7 -> WithLatestFrom => #8
        SubscribeSubject ShapingStage => #9
        #8, #9 -> WithLatestFrom => #10
        SubscribeSubject AudAmplitude => #11
        #10, #11 -> WithLatestFrom => #12
        SubscribeSubject RewardFloorFreq => #13
        #12, #13 -> WithLatestFrom => #14
        SubscribeSubject RewardCeilFreq => #15
        #14, #15 -> WithLatestFrom => #16
        SubscribeSubject TrialEndFreq => #17
        #16, #17 -> WithLatestFrom => #18
        SubscribeSubject TrialEndFreqV => #19
        #18, #19 -> WithLatestFrom => #20
        SubscribeSubject TrackLength => #21
        #20, #21 -> WithLatestFrom => #22
        SubscribeSubject TrialDistance => #23
        #22, #23 -> WithLatestFrom => #24
        SubscribeSubject LickCount => #25
        #24, #25 -> WithLatestFrom => #26
        SubscribeSubject WasRewarded => #27
        #26, #27 -> WithLatestFrom => #28
        SubscribeSubject WasTimeout => #29
        #28, #29 -> WithLatestFrom => #30
        SubscribeSubject HitEndOfTrack => #31
        #30, #31 -> WithLatestFrom => #32
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=TrialLog) => #3
            SubscribeSubject AnimalAndSessionID => #4
            #3, #4 -> Zip
            -> Format(Format={0}_{1}_, Selector="Item1, Item2")
            -> Take(Count=1) => #7
            -> UclOpen.Core.StripSubstring => #8
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #11
            #0, #8, #7, #11 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #36
        SubscribeSubject TruncationPoint => #38
        #32, #38 -> WithLatestFrom => #39
        SubscribeSubject ITIStartHarp => #40
        #39, #40 -> WithLatestFrom => #41
        SubscribeSubject InterTrialInterval => #42
        #41, #42 -> WithLatestFrom => #43
        SubscribeSubject TrialStartHarp => #44
        #43, #44 -> WithLatestFrom => #45
        SubscribeSubject TrialStartWheelDistance => #46
        #45, #46 -> WithLatestFrom => #47
        SubscribeSubject CueOnsetHarp => #48
        #47, #48 -> WithLatestFrom => #49
        SubscribeSubject OutcomeHarp => #50
        #49, #50 -> WithLatestFrom => #51
        SubscribeSubject WasPunished => #52
        #51, #52 -> WithLatestFrom => #53
        SubscribeSubject HarpTime => #54
        #53, #54 -> WithLatestFrom => #55
        SubscribeSubject OptoTrial => #56
        SubscribeSubject OptoOnsetHarp => #57
        SubscribeSubject OptoOffsetHarp => #58
        #56, #57, #58 -> CombineLatest => #59
        #55, #59 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform FormatTrialData => #33
          Expression:
            new
            (
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1 as BonsaiTime,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Modality,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Trial,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as ShapingStage,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as AudAmplitude,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as RewAudFreqFloor,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as RewAudFreqCeil,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as TrialEndAudFreq,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as TrialEndVisFreq,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as TrackLength,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as TrialEndPosCm,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as LickCount,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as WasRewarded,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as WasTimeout,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as HitEndOfTrack,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as TruncationPoint,
            String.Format("{0:F6}", it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2) as ITIStartHarp,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.TotalSeconds as ITIDrawnSec,
            String.Format("{0:F6}", it.Item1.Item1.Item1.Item1.Item1.Item1.Item2) as TrialStartHarp,
            String.Format("{0:F4}", it.Item1.Item1.Item1.Item1.Item1.Item2) as TrialStartWheelDistanceCm,
            String.Format("{0:F6}", it.Item1.Item1.Item1.Item1.Item2) as CueOnsetHarp,
            String.Format("{0:F6}", it.Item1.Item1.Item1.Item2) as OutcomeHarp,
            (it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 ? "EndOfTrack" : it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 ? "Timeout" : it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 <= 2 ? "FreqReached" : it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 ? "CorrectLick" : "WrongLickLimit") as EndReason,
            it.Item1.Item1.Item2 as WasPunished,
            String.Format("{0:F6}", it.Item1.Item2) as TrialEndHarp, it.Item2.Item1.OptogeneticEnabled as OptogeneticEnabled, it.Item2.Item1.OptogeneticCondition as OptogeneticCondition, String.Format("{0:F6}", it.Item2.Item2) as OptoOnsetHarp, String.Format("{0:F6}", it.Item2.Item3) as OptoOffsetHarp )
        #33, #36 -> Bonsai.IO.CsvWriter
          FileName=C:\dev\auditory-vr-corridor\Logs\sub-TC001\ses-A42_date-2026-09-23T13-48-00\TrialLog_A42_TC001_\TrialLog_A42_TC001_.csv
          Append=false
          Overwrite=true
          Suffix=Timestamp
          IncludeHeader=true

    GroupWorkflow LogParams
        SubscribeSubject TaskParams
        -> MemberSelector(Selector=LogConfig.LoggingRootPath)
        -> BehaviorSubject LoggingRootPath

        SubscribeSubject TaskParams
        -> MemberSelector(Selector=LogConfig.AnimalId)
        -> BehaviorSubject AnimalID

        SubscribeSubject TaskParams
        -> MemberSelector(Selector=LogConfig.SessionId)
        -> BehaviorSubject SessionID

        SubscribeSubject SessionID => #9
        SubscribeSubject AnimalID => #10
        #9, #10 -> Zip
        -> Format(Format={0}_{1}, Selector="Item1,Item2")
        -> BehaviorSubject AnimalAndSessionID

    GroupWorkflow LicketySplit
        SubscribeSubject LickEventsLeft
        -> IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName=LicketySplitLeft)

        Disable SubscribeSubject LickEventsRight
        -> Disable IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName=LicketySplitRight)

    GroupWorkflow Cameras
        SubscribeSubject FrameEvents1
        -> Skip(Count=1)
        -> GroupWorkflow LogVideo
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Image) => #1
            ExternalizedMapping(Name) => #2
            -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera1) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=avi)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #4
            ExternalizedMapping(FrameRate) => #5
            #1, #4, #5 -> Bonsai.Vision.VideoWriter
              FileName=C:\dev\auditory-vr-corridor\Logs\sub-TC001\ses-A42_date-2026-09-23T13-48-00\Cameras\VideoData_Camera1.avi
              Suffix=None
              Buffered=true
              Overwrite=true
              FourCC=FMP4
              FrameRate=50
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=NearestNeighbor
            -> WorkflowOutput
            #0 -> MemberSelector(Selector=Seconds) => #8
            #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #9
            #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #10
            #8, #9, #10 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
              Expression:
                new(
                Item1 as Seconds,
                Item2 as Timestamp,
                Item3 as FrameID)
            #2 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera1) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=csv)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #14
            #12, #14 -> Bonsai.IO.CsvWriter
              FileName=C:\dev\auditory-vr-corridor\Logs\sub-TC001\ses-A42_date-2026-09-23T13-48-00\Cameras\VideoData_Camera1.csv
              Append=false
              Overwrite=true
              Suffix=None
              IncludeHeader=true
              Selector=""

        SubscribeSubject FrameEvents2
        -> Skip(Count=1)
        -> GroupWorkflow LogVideo
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Image) => #1
            ExternalizedMapping(Name) => #2
            -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera2) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=avi)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #4
            ExternalizedMapping(FrameRate) => #5
            #1, #4, #5 -> Bonsai.Vision.VideoWriter
              FileName=C:\dev\auditory-vr-corridor\Logs\sub-TC001\ses-A42_date-2026-09-23T13-48-00\Cameras\VideoData_Camera2.avi
              Suffix=None
              Buffered=true
              Overwrite=true
              FourCC=FMP4
              FrameRate=50
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=NearestNeighbor
            -> WorkflowOutput
            #0 -> MemberSelector(Selector=Seconds) => #8
            #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #9
            #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #10
            #8, #9, #10 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
              Expression:
                new(
                Item1 as Seconds,
                Item2 as Timestamp,
                Item3 as FrameID)
            #2 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera2) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=csv)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #14
            #12, #14 -> Bonsai.IO.CsvWriter
              FileName=C:\dev\auditory-vr-corridor\Logs\sub-TC001\ses-A42_date-2026-09-23T13-48-00\Cameras\VideoData_Camera2.csv
              Append=false
              Overwrite=true
              Suffix=None
              IncludeHeader=true
              Selector=""

        SubscribeSubject FrameEvents3
        -> Skip(Count=1)
        -> GroupWorkflow LogVideo
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Image) => #1
            ExternalizedMapping(Name) => #2
            -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera3) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=avi)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #4
            ExternalizedMapping(FrameRate) => #5
            #1, #4, #5 -> Bonsai.Vision.VideoWriter
              FileName=C:\dev\auditory-vr-corridor\Logs\sub-TC001\ses-A42_date-2026-09-23T13-48-00\Cameras\VideoData_Camera3.avi
              Suffix=None
              Buffered=true
              Overwrite=true
              FourCC=FMP4
              FrameRate=50
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=NearestNeighbor
            -> WorkflowOutput
            #0 -> MemberSelector(Selector=Seconds) => #8
            #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #9
            #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #10
            #8, #9, #10 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
              Expression:
                new(
                Item1 as Seconds,
                Item2 as Timestamp,
                Item3 as FrameID)
            #2 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera3) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=csv)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #14
            #12, #14 -> Bonsai.IO.CsvWriter
              FileName=C:\dev\auditory-vr-corridor\Logs\sub-TC001\ses-A42_date-2026-09-23T13-48-00\Cameras\VideoData_Camera3.csv
              Append=false
              Overwrite=true
              Suffix=None
              IncludeHeader=true
              Selector=""

    SubscribeSubject ClockSynchronizerEvents
    -> IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName=TimestampGenerator)

    GroupWorkflow IntervalLogger
        SubscribeSubject WheelDistanceCm
        -> DistinctUntilChanged => #1
        SubscribeSubject LickCount
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: convert.ToDouble(it)
        -> DistinctUntilChanged => #4
        SubscribeSubject CurrFreq
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: convert.ToDouble(it)
        -> DistinctUntilChanged => #7
        SubscribeSubject AudAmplitude
        -> DistinctUntilChanged => #9
        SubscribeSubject StartTime => #13
        SubscribeSubject TrialNumber => #17
        SubscribeSubject WheelDistanceCm => #19
        SubscribeSubject TrialDistance => #21
        SubscribeSubject MouseVirtualPosition => #23
        SubscribeSubject TrackLength => #25
        SubscribeSubject CurrFreq => #27
        SubscribeSubject AudAmplitude => #29
        SubscribeSubject CurrFreqV => #31
        SubscribeSubject CurrOpacity => #33
        SubscribeSubject LickCount => #35
        SubscribeSubject WasRewarded => #37
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=IntervalLog) => #3
            SubscribeSubject AnimalAndSessionID => #4
            #3, #4 -> Zip
            -> Format(Format={0}_{1}_, Selector="Item1, Item2")
            -> Take(Count=1) => #7
            -> UclOpen.Core.StripSubstring => #8
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #11
            #0, #8, #7, #11 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #42
        SubscribeSubject CueActive
        -> DistinctUntilChanged => #46
        #1, #4, #7, #9, #46 -> Merge
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #12
        #12, #13 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform ElapsedMs
          Expression: it.Item1 - it.Item2
        -> Format(Format={0:F2}, Selector="") => #16
        #16, #17 -> WithLatestFrom => #18
        #18, #19 -> WithLatestFrom => #20
        #20, #21 -> WithLatestFrom => #22
        #22, #23 -> WithLatestFrom => #24
        #24, #25 -> WithLatestFrom => #26
        #26, #27 -> WithLatestFrom => #28
        #28, #29 -> WithLatestFrom => #30
        #30, #31 -> WithLatestFrom => #32
        #32, #33 -> WithLatestFrom => #34
        #34, #35 -> WithLatestFrom => #36
        #36, #37 -> WithLatestFrom => #38
        SubscribeSubject CueActive => #47
        #38, #47 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform FormatTrialData => #39
          Expression:
            new
            (
            Convert.ToInt32(Convert.ToDouble(it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1)) as BonsaiTime,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Trial,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as TotalDistance,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as TrialDistance,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as MousePosition,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as TrackLength,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as AudFreq,
            it.Item1.Item1.Item1.Item1.Item1.Item2 as AudAmplitude,
            it.Item1.Item1.Item1.Item1.Item2 as VisFreq,
            it.Item1.Item1.Item1.Item2 as Opacity,
            it.Item1.Item1.Item2 as LickCount,
            it.Item1.Item2 as WasRewarded,
            it.Item2 as CueActive
            )
        #39, #42 -> Bonsai.IO.CsvWriter
          FileName=C:\dev\auditory-vr-corridor\Logs\sub-TC001\ses-A42_date-2026-09-23T13-48-00\IntervalLog_A42_TC001_\IntervalLog_A42_TC001_.csv
          Append=false
          Overwrite=true
          Suffix=Timestamp
          IncludeHeader=true
        -> WorkflowOutput
    -> WorkflowOutput

    SubscribeSubject LoggingRootPath
    -> PropertyMapping(Path) => #10
    SubscribeSubject SessionID
    -> PropertyMapping(SessionId) => #12
    SubscribeSubject AnimalID
    -> PropertyMapping(SubjectId) => #14
    #10, #12, #14 -> IncludeWorkflow(Path=UclOpen.Logging:LogController.bonsai, SubjectId=TC001, SessionId=A42, Path=../Logs)

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName=Behavior)

    Disable ExternalizedMapping(Name, Extension)
    -> Disable GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
        SubscribeSubject PathPrefix => #0
        WorkflowInput Source1 => #1
        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
        #1, #2 -> StringProperty(Value=IntervalLog) => #3
        SubscribeSubject AnimalAndSessionID => #4
        #3, #4 -> Zip
        -> Format(Format={0}_{1}_, Selector="Item1, Item2")
        -> Take(Count=1) => #7
        -> UclOpen.Core.StripSubstring => #8
        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
        -> StringProperty(Value=csv)
        -> Take(Count=1) => #11
        #0, #8, #7, #11 -> Zip
        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
        -> WorkflowOutput

    GroupWorkflow HarpClock
      Description: Harp time (seconds on the synchronised Harp clock, as in the Harp binaries) of the latest Behavior board AnalogData sample, about every 1 ms. Timestamps the TrialLog and StimulusLog.
      Workflow
        BehaviorSubject<System.Double> HarpTime

        DoubleProperty(Value=NaN)
        -> MulticastSubject HarpTime

        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject HarpTime

    GroupWorkflow TrialEventTimes
      Description: Harp times of each trial's ITI start (TrialActive set to 1), trial start (StartTime set, track position zero) and outcome (TrialActive set to 0), read by the TrialLogger. Per-trial values are cleared at each ITI start. OptoOnsetHarp and OptoOffsetHarp are the Harp times when Bonsai sent the Zapit TTL (hardware mode) or StartStimulus (software mode), and the StopStimulus, on trials of an optogenetics session; set by OptoOnset in TaskLogic and cleared at each ITI start like the others. Exact laser onset is the DO3 write in the Behavior board log; after the stop the light ramps down over the condition's offRampDownDuration_ms.
      Workflow
        BehaviorSubject<System.Double> ITIStartHarp
        BehaviorSubject<System.Double> TrialStartHarp
        BehaviorSubject<System.Double> CueOnsetHarp
        BehaviorSubject<System.Double> OutcomeHarp
        BehaviorSubject<System.Boolean> WasPunished

        DoubleProperty(Value=NaN) => #5
        -> MulticastSubject ITIStartHarp
        #5 -> MulticastSubject TrialStartHarp
        #5 -> MulticastSubject CueOnsetHarp
        #5 -> MulticastSubject OutcomeHarp
        #5 -> MulticastSubject OptoOnsetHarp
        #5 -> MulticastSubject OptoOffsetHarp

        BooleanProperty(Value=false)
        -> MulticastSubject WasPunished

        SubscribeSubject TrialActive
        -> Condition IsITIStart => #13
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == 1.0
            -> WorkflowOutput
        SubscribeSubject HarpTime => #14
        #13, #14 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject ITIStartHarp
        #13 -> DoubleProperty(Value=NaN) => #18
        -> MulticastSubject TrialStartHarp
        #18 -> MulticastSubject CueOnsetHarp
        #18 -> MulticastSubject OutcomeHarp
        #13 -> BooleanProperty(Value=false)
        -> MulticastSubject WasPunished
        #18 -> MulticastSubject OptoOnsetHarp
        #18 -> MulticastSubject OptoOffsetHarp

        SubscribeSubject TrialActive
        -> Condition IsOutcome => #25
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == 0.0
            -> WorkflowOutput
        SubscribeSubject HarpTime => #26
        #25, #26 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject OutcomeHarp

        SubscribeSubject StartTime
        -> Skip(Count=1) => #31
        SubscribeSubject HarpTime => #32
        #31, #32 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject TrialStartHarp

        BehaviorSubject<System.Double> OptoOnsetHarp
        BehaviorSubject<System.Double> OptoOffsetHarp

    GroupWorkflow RigLogger
      Description: Writes the RigLog once at the start of the session: this PC's name (COMPUTERNAME) and the rig settings in effect from RigConfigs (COM ports, camera serials, mesh map, valve open time, spout IN positions and Zapit settings).
      Workflow
        SubscribeSubject RigConfigs
        -> Bonsai.IO.GetEnvironmentVariable(Name=COMPUTERNAME) => #1
        SubscribeSubject RigConfigs => #2
        #1, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform FormatRigData => #4
          Expression: new(it.Item1 as RigName, it.Item2.COMPortTimestampGenerator as COMPortTimestampGenerator, it.Item2.COMPortBehaviourBoard as COMPortBehaviourBoard, it.Item2.COMPortStepperDriver1 as COMPortStepperDriver1, it.Item2.COMPortStepperDriver2 as COMPortStepperDriver2, it.Item2.COMPortLicketySplit as COMPortLicketySplit, it.Item2.SerialNumberCamera1 as SerialNumberCamera1, it.Item2.SerialNumberCamera2 as SerialNumberCamera2, it.Item2.SerialNumberCamera3 as SerialNumberCamera3, it.Item2.AudioDeviceName as AudioDeviceName, it.Item2.MeshMapFilePath as MeshMapFilePath, it.Item2.ValveOpenTime as ValveOpenTime, it.Item2.Motor1InPosition as Motor1InPosition, it.Item2.Motor2InPosition as Motor2InPosition, it.Item2.Motor3InPosition as Motor3InPosition, it.Item2.Motor4InPosition as Motor4InPosition, it.Item2.Motor5InPosition as Motor5InPosition, it.Item2.ZapitHost as ZapitHost, it.Item2.ZapitPort as ZapitPort, it.Item2.ZapitHardwareTriggered as ZapitHardwareTriggered, it.Item2.ZapitTriggerPulseWidth as ZapitTriggerPulseWidth)
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=RigLog) => #3
            SubscribeSubject AnimalAndSessionID => #4
            #3, #4 -> Zip
            -> Format(Format={0}_{1}_, Selector="Item1, Item2")
            -> Take(Count=1) => #7
            -> UclOpen.Core.StripSubstring => #8
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #11
            #0, #8, #7, #11 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #7
        #4, #7 -> Bonsai.IO.CsvWriter(FileName=RigLog.csv, Append=false, Overwrite=true, Suffix=Timestamp, IncludeHeader=true)

    GroupWorkflow WorkflowCopyLogger
      Description: Saves a copy of main.bonsai, as it is on disk at the start of the session, so each session records the exact workflow and hard-coded settings it ran with. It is copied line by line, so characters outside plain ASCII (the arrows on the spout buttons) come out as ?.
      Workflow
        Bonsai.IO.CsvReader(FileName=main.bonsai, SkipRows=0) => #0
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=WorkflowCopy) => #3
            SubscribeSubject AnimalAndSessionID => #4
            #3, #4 -> Zip
            -> Format(Format={0}_{1}_, Selector="Item1, Item2")
            -> Take(Count=1) => #7
            -> UclOpen.Core.StripSubstring => #8
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=bonsai)
            -> Take(Count=1) => #11
            #0, #8, #7, #11 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #3
        #0, #3 -> Bonsai.IO.TextWriter(FileName=WorkflowCopy.bonsai, Suffix=None, Buffered=true, Overwrite=true, Append=false)

    GroupWorkflow RigConfigsCopyLogger
      Description: Saves a copy of Extensions\RigConfigs.cs, as it is on disk at the start of the session, so each session records every rig's settings as they were then.
      Workflow
        Bonsai.IO.CsvReader(FileName=Extensions\RigConfigs.cs, SkipRows=0) => #0
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=RigConfigsCopy) => #3
            SubscribeSubject AnimalAndSessionID => #4
            #3, #4 -> Zip
            -> Format(Format={0}_{1}_, Selector="Item1, Item2")
            -> Take(Count=1) => #7
            -> UclOpen.Core.StripSubstring => #8
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=cs)
            -> Take(Count=1) => #11
            #0, #8, #7, #11 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #3
        #0, #3 -> Bonsai.IO.TextWriter(FileName=RigConfigsCopy.cs, Suffix=None, Buffered=true, Overwrite=true, Append=false)

    GroupWorkflow ZapitLogger
      Description: Optogenetics sessions only. Writes Zapit.csv: every reply from Zapit on the Harp clock (HarpTime is the latest Behavior board time when the reply arrived, not laser onset). Command 1 is StartStimulus (Value is the condition presented, LaserOn 1 if the laser fired), 0 StopStimulus, 2 and 4 the startup checks. The hardware onset of a TTL-triggered stimulus is the DO3 write in the Behavior board log. The startup rows can be missing or carry a late HarpTime (the queries are sent before this logger starts), and so can an error reply that stops the session; Bonsai's error message has that one.
      Workflow
        SubscribeSubject TaskParams
        -> Condition OptogeneticsSession?
            WorkflowInput Source1
            -> MemberSelector(Selector=Optogenetics.Enabled)
            -> WorkflowOutput
        -> SelectMany LogZapitReplies
            WorkflowInput Source1

            SubscribeSubject ZapitReplies => #1
            SubscribeSubject HarpTime => #2
            #1, #2 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform FormatZapitReply => #4
              Expression: new(String.Format("{0:F6}", it.Item2) as HarpTime, it.Item1.CommandCode as Command, it.Item1.Value as Value, it.Item1.LaserOn as LaserOn, it.Item1.IsError as IsError, String.Format("{0:F8}", it.Item1.ServerDatenum) as ServerDatenum)
            ExternalizedMapping(Name, Extension)
            -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                WorkflowInput Source1 => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
                #1, #2 -> StringProperty(Value=Zapit) => #3
                SubscribeSubject AnimalAndSessionID => #4
                #3, #4 -> Zip
                -> Format(Format={0}_{1}_, Selector="Item1, Item2")
                -> Take(Count=1) => #7
                -> UclOpen.Core.StripSubstring => #8
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=csv)
                -> Take(Count=1) => #11
                #0, #8, #7, #11 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #7
            #4, #7 -> Bonsai.IO.CsvWriter(FileName=Zapit.csv, Append=false, Overwrite=true, Suffix=Timestamp, IncludeHeader=true)

    GroupWorkflow ZapitStimConfigCopyLogger
      Description: Optogenetics sessions only: saves a copy of the Zapit stimulus config named in the session JSON, as it is on disk at the start of the session. The TrialLog records only condition numbers, so this copy is what says which sites, laser power and ramp-down each condition meant in this session, even if the file is edited later. Copied line by line like RigConfigsCopy.
      Workflow
        SubscribeSubject TaskParams
        -> Condition OptogeneticsSession?
            WorkflowInput Source1
            -> MemberSelector(Selector=Optogenetics.Enabled)
            -> WorkflowOutput
        -> SelectMany CopyStimConfig
            WorkflowInput Source1
            -> MemberSelector(Selector=Optogenetics.ZapitConfigPath)
            -> PropertyMapping(FileName)
            -> Bonsai.IO.CsvReader(FileName=ZapitStimConfig.yml, SkipRows=0) => #3
            ExternalizedMapping(Name, Extension)
            -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                WorkflowInput Source1 => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
                #1, #2 -> StringProperty(Value=ZapitStimConfigCopy) => #3
                SubscribeSubject AnimalAndSessionID => #4
                #3, #4 -> Zip
                -> Format(Format={0}_{1}_, Selector="Item1, Item2")
                -> Take(Count=1) => #7
                -> UclOpen.Core.StripSubstring => #8
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=yml)
                -> Take(Count=1) => #11
                #0, #8, #7, #11 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #6
            #3, #6 -> Bonsai.IO.TextWriter(FileName=ZapitStimConfigCopy.yml, Suffix=None, Buffered=true, Overwrite=true, Append=false)

GroupWorkflow InitMixer
    Bonsai.Mixer.CreateMixerContext(HostApi="Windows WDM-KS", DeviceName="Speakers (XMOS xCORE-200 MC (UAC2.0))", SampleRate=48000, ChannelCount=nil, SuggestedLatency=0.002)
    -> Bonsai.Mixer.StartMixer
    -> BehaviorSubject Mixer

    SubscribeSubject Buffer => #3
    SubscribeSubject Mixer
    -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1) => #5
    #3, #5 -> Bonsai.Mixer.AppendBuffer

    Annotation "One mixer source per sound so they play over each other. AppendBuffer only completes when its source does, so it stays here - trial branches multicast to RewardBuffer and ErrorBuffer"
      Text: One mixer source per sound so they play over each other. AppendBuffer only completes when its source does, so it stays here - trial branches multicast to RewardBuffer and ErrorBuffer

    SubscribeSubject RewardBuffer => #8
    SubscribeSubject Mixer
    -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1) => #10
    #8, #10 -> Bonsai.Mixer.AppendBuffer

    SubscribeSubject ErrorBuffer => #12
    SubscribeSubject Mixer
    -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1) => #14
    #12, #14 -> Bonsai.Mixer.AppendBuffer

    Annotation "Background white noise - 60 s loop for the whole session, fades in over 2 s"(Text="Background white noise - 60 s loop for the whole session, fades in over 2 s")

    SubscribeSubject Mixer
    -> Bonsai.Mixer.CreateSource(Looping=true, Playing=true, Gain=0)
    -> BehaviorSubject BackgroundSource

    Bonsai.Dsp.MatrixReader(Path=./waveforms/background_noise.bin, Offset=0, SampleRate=0, ChannelCount=1, BufferLength=0, Depth=F32, Layout=RowMajor)
    -> Take(Count=1) => #21
    SubscribeSubject BackgroundSource => #22
    #21, #22 -> Bonsai.Mixer.AppendBuffer

    SubscribeSubject TaskParams
    -> Bonsai.Scripting.Expressions.ExpressionTransform BackgroundNoiseGain => #25
      Description: Source gain that makes the noise RMS BackgroundNoiseLevel x the beep RMS. Beeps peak at Amplitude x Amplitude (gen_session writes them at Amplitude and WaveformDict rescales them by Amplitude again) and a beep RMS is half its peak. The noise file is uniform white noise in [-1, 1], RMS 1/sqrt(3)
      Expression: Convert.ToSingle(it.BackgroundNoiseLevel * 0.5 * it.Amplitude * it.Amplitude * Math.Sqrt(3))
    SubscribeSubject BackgroundSource => #26
    #25, #26 -> CombineLatest
    -> InputMapping(Selector=Item2, Gain(Selector=Item1))
    -> Bonsai.Mixer.SetGain(Gain=0, Duration=2)

ExternalizedMapping(DisplayDevice)
-> GroupWorkflow BonVisionResources
    ExternalizedMapping(DisplayDevice)
    -> Bonsai.Shaders.CreateWindow
      Width=1920
      Height=1080
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=First
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-135, Right=135, Bottom=-22.5, Top=82.5)
    -> BehaviorSubject DrawStimuli => #6
    SubscribeSubject RigConfigs
    -> PropertyMapping(FileName(Selector=MeshMapFilePath)) => #8
    #6, #8 -> IncludeWorkflow(Path=BonVision:Environment.MeshMapping.bonsai, ClearColor=#7F7F7F, FileName=C:\RigConfigs\MeshMap.csv)
    -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\RigConfigs\gammalut.bmp)

GroupWorkflow TaskLogic => #11
    Defer BeepTimer => #0
        GroupWorkflow HarpBeat => #0
          Description: Counts beeps (0, 1, 2, ...) every 50 ms of the Harp clock: every 50th Behavior board AnalogData sample (sent at 1 kHz), the first one straight away. This replaces a 50 ms rx:Timer, which Windows' 15.6 ms timer steps stretched to about 60 ms with jitter. ObserveOn hands each beep to its own thread, as the timer did, so the board's thread only counts samples.
          Workflow
            SubscribeSubject HarpTime
            -> Skip(Count=1)
            -> ElementIndex
            -> Condition Every50thSample
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.Index % 50 == 0
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt64(it.Index / 50)
            -> ObserveOn(Scheduler=NewThreadScheduler)
            -> WorkflowOutput
        ExternalizedMapping(RangeMin, RangeMax, Count)
        -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=2, RangeMin=0, RangeMax=1)
        -> Bonsai.Numerics.Permutation
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> MulticastSubject InterTrialInterval
        -> GroupWorkflow Monitor => #7
            ExternalizedMapping(Value)
            -> StringProperty(Value=StartITI)
            -> Take(Count=1) => #2
            WorkflowInput Source1
            -> Materialize => #4
            #2, #4 -> CombineLatest
            -> Bonsai.IO.WriteLine
            -> MemberSelector(Selector=Item2)
            -> Dematerialize
            -> WorkflowOutput
        -> SelectMany InitITI => #8
            WorkflowInput Source1
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT1S)
            -> SelectMany WaitForNoLicks
              Description: Stages 4-6 only: holds the next trial until the animal has gone without licking for the Throttle DueTime below (default PT1S), so consummatory licking from the previous reward cannot carry into the next response window. Deliberately uncapped - a mouse that keeps licking keeps delaying the next trial. Stages 1-3 pass straight through. The seeded Merge is required: without it Throttle never fires for a mouse that does not lick at all, and the task would stall.
              Workflow
                SubscribeSubject LickStateLeft
                -> Condition IsLick => #1
                    WorkflowInput Source1
                    -> WorkflowOutput
                BooleanProperty(Value=true) => #2
                #1, #2 -> Merge
                -> Throttle(DueTime=PT1S)
                -> Take(Count=1) => #5
                WorkflowInput Source1 => #6
                -> Condition IsStage4or5or6 => #7
                    SubscribeSubject ShapingStage => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> Sample
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: ((it >= 4) && (it <= 6))
                    -> WorkflowOutput
                #5, #7 -> SubscribeWhen => #8
                #6 -> Condition IsStage1or2or3
                    SubscribeSubject ShapingStage => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> Sample
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: ((it >= 1) && (it <= 3))
                    -> WorkflowOutput
                -> BooleanProperty(Value=true) => #10
                #8, #10 -> Merge
                -> WorkflowOutput
            -> Disable Delay(DueTime=PT0.5S)
            -> WorkflowOutput
        #7 -> SelectMany ThisTrialOpto => #57
          Description: Waits for the stimulation drawn for the trial that is starting (OptoTrial is drawn when TrialNumber goes up), so ArmZapit never acts on the previous trial's draw.
          Workflow
            WorkflowInput Source1

            SubscribeSubject OptoTrial => #1
            SubscribeSubject TrialNumber => #2
            #1, #2 -> CombineLatest
            -> Condition ThisTrial?
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1.TrialNumber == Item2
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput
        #8, #57 -> Zip
        -> MemberSelector(Selector=Item2)
        -> SelectMany ArmZapit
          Description: Hardware-triggered rigs (RigConfigs ZapitHardwareTriggered): sends this trial's StartStimulus - laser on, or laser off (sham) - so Zapit loads the waveform and waits for the DO3 TTL from OptoOnset, and passes only once Zapit has answered that it is armed with the requested condition and laser state. Continuous waveform (no StimDuration): Zapit ignores StopStimulus for fixed-duration stimuli, so the laser could not be stopped at the outcome. The reply is listened for before the command goes out (first input of the Zip). Software-timed rigs and non-optogenetics sessions pass straight through. Runs once the ITI has finished (InitITI zipped with this trial's draw), so Zapit is armed for only the round trip before the DO3 TTL at beep 0: a session stopped during the ITI never leaves Zapit armed, and every trial of a session gets the same few tens of ms of extra ITI.
          Workflow
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject settings

            SubscribeSubject settings => #3
            SubscribeSubject RigConfigs => #4
            #3, #4 -> Zip => #5
            -> Condition HardwareArming? => #6
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1.OptogeneticCondition > 0 && Item2.ZapitHardwareTriggered
                -> WorkflowOutput
            SubscribeSubject settings
            -> PropertyMapping(ConditionNumber(Selector=OptogeneticCondition), LaserOn(Selector=OptogeneticEnabled)) => #8
            #6, #8 -> CreateStartStimulus(ConditionNumber=0, LaserOn=true, HardwareTriggered=true, Logging=true, StimDuration=0, LaserPower=0, StartDelay=0)
            -> MulticastSubject ZapitCommands => #10
            SubscribeSubject ZapitReplies
            -> Skip(Count=1)
            -> Condition StartStimulusReply?
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: CommandCode == 1
                -> WorkflowOutput
            -> Take(Count=1) => #14
            #14, #10 -> Zip
            -> MemberSelector(Selector=Item1) => #16
            SubscribeSubject settings => #17
            #16, #17 -> WithLatestFrom => #18
            -> Condition ArmedAsAsked?
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: !Item1.IsError && Item1.Value == Item2.OptogeneticCondition && Item1.LaserOn == (Item2.OptogeneticEnabled ? 1 : 0)
                -> WorkflowOutput
            -> MemberSelector(Selector=Item2) => #20
            #18 -> Condition ArmedOtherwise?
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: !Item1.IsError && !(Item1.Value == Item2.OptogeneticCondition && Item1.LaserOn == (Item2.OptogeneticEnabled ? 1 : 0))
                -> WorkflowOutput
            -> Format
              Format="Zapit armed condition {0} with laserOn {1}, but this trial asked for condition {2} with laser on = {3}."
              Selector="Item1.Value,Item1.LaserOn,Item2.OptogeneticCondition,Item2.OptogeneticEnabled"
            -> ThrowError
            #5 -> Condition NoArmingNeeded?
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: !(Item1.OptogeneticCondition > 0 && Item2.ZapitHardwareTriggered)
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #25
            #20, #25 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> GroupWorkflow Monitor => #9
            ExternalizedMapping(Value)
            -> StringProperty(Value=FinishedITI)
            -> Take(Count=1) => #2
            WorkflowInput Source1
            -> Materialize => #4
            #2, #4 -> CombineLatest
            -> Bonsai.IO.WriteLine
            -> MemberSelector(Selector=Item2)
            -> Dematerialize
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2)) => #10
        #0, #10 -> SubscribeWhen
        -> MulticastSubject BeepTimer => #12
        -> WorkflowOutput
        #12 -> Condition FirstBeep?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == 0
            -> WorkflowOutput
        -> SelectMany OptoOnset(Description="Runs once per trial at beep 0: on trials with a Zapit command, starts LaserOnUntilOutcome.")
            WorkflowInput Source1

            SubscribeSubject OptoTrial
            -> Take(Count=1)
            -> AsyncSubject settings

            SubscribeSubject settings => #4
            SubscribeSubject RigConfigs => #5
            #4, #5 -> Zip
            -> Condition ZapitTrial?
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1.OptogeneticCondition > 0
                -> WorkflowOutput
            -> SelectMany LaserOnUntilOutcome
              Description: One optogenetics-session trial, from beep 0 to the stop. Hardware-triggered rigs pulse behaviour board DO3 (the width is RigConfigs ZapitTriggerPulseWidth), which starts the waveform ArmZapit loaded, so onset is on the Harp clock in the Behavior board log; software-timed rigs send StartStimulus now and Zapit starts on receipt. Sham trials do exactly the same with the laser off. The laser is stopped at the outcome (TrialActive set to 0) or after OptogeneticMaxDuration, whichever comes first. OptoOnsetHarp and OptoOffsetHarp record when Bonsai sent the onset and the stop.
              Workflow
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject trial

                SubscribeSubject trial
                -> Condition Hardware?
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: Item2.ZapitHardwareTriggered
                    -> WorkflowOutput
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3))
                -> MulticastSubject BehaviorCommands

                SubscribeSubject trial
                -> Condition Software? => #8
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: !Item2.ZapitHardwareTriggered
                    -> WorkflowOutput
                SubscribeSubject trial
                -> PropertyMapping(ConditionNumber(Selector=Item1.OptogeneticCondition), LaserOn(Selector=Item1.OptogeneticEnabled)) => #10
                #8, #10 -> CreateStartStimulus(ConditionNumber=0, LaserOn=true, HardwareTriggered=false, Logging=true, StimDuration=0, LaserPower=0, StartDelay=0)
                -> MulticastSubject ZapitCommands

                SubscribeSubject trial => #13
                SubscribeSubject HarpTime => #14
                #13, #14 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject OptoOnsetHarp

                SubscribeSubject trial
                -> Bonsai.Scripting.Expressions.ExpressionTransform MaxDuration
                  Expression: TimeSpan.FromSeconds(it.Item1.OptogeneticMaxDuration)
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT12S, Period=PT0S)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #22
                  Expression: "MaxDuration"
                SubscribeSubject TrialActive
                -> Condition Outcome?
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it == 0.0
                    -> WorkflowOutput
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #25
                  Expression: "Outcome"
                #22, #25 -> Merge
                -> Take(Count=1) => #27
                -> CreateStopStimulus
                -> MulticastSubject ZapitCommands
                SubscribeSubject HarpTime => #30
                #27, #30 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject OptoOffsetHarp
                #27 -> WorkflowOutput
        #9 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Take(Count=1)
        -> MulticastSubject StartTime
        #9 -> IntProperty(Value=0)
        -> MulticastSubject LickCount
        SubscribeSubject WheelDistanceCm => #18
        #9, #18 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1)
        -> MulticastSubject TrialStartWheelDistance
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: 0.0
        -> MulticastSubject TrialDistFloor
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: false
        -> MulticastSubject TrialEnded
        SubscribeSubject ZapitCommands => #65
        #7, #65 -> WithLatestFrom
        -> Condition StimulusLeftOn? => #67
          Description: Optogenetics sessions only (nothing is ever sent to ZapitCommands otherwise). At ITI start, the last command sent to Zapit should be the previous trial's StopStimulus. If it is a StartStimulus, that trial ended without reaching its stop (for example the trial loop restarted without an outcome), so the continuous stimulus may still be playing: send StopStimulus now, long before this trial's StartStimulus.
          Workflow
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item2.Command == "StartStimulus"
            -> WorkflowOutput
        -> CreateStopStimulus
        -> MulticastSubject ZapitCommands
        #67 -> Format
          Format="Zapit: the previous trial ended without a StopStimulus (last command sent: {0}), so StopStimulus was sent at the start of this ITI."
          Selector=Item2
        -> Bonsai.IO.WriteLine

        SubscribeSubject TrialNumber
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TrialNumber

        IntProperty(Value=0)
        -> MulticastSubject CurrFreq

        BooleanProperty(Value=false)
        -> MulticastSubject WasRewarded

        BooleanProperty(Value=false)
        -> MulticastSubject WasTimeout

        BooleanProperty(Value=false)
        -> MulticastSubject HitEndOfTrack

        DoubleProperty(Value=0)
        -> MulticastSubject CurrFreqV

        DoubleProperty(Value=0)
        -> MulticastSubject TrialDistFloor

        SubscribeSubject WheelDistanceCm
        -> Take(Count=1)
        -> MulticastSubject TrialStartWheelDistance

        DoubleProperty(Value=1)
        -> MulticastSubject TrialActive

        DoubleProperty(Value=1)
        -> MulticastSubject CueActive

        Annotation Optogenetics
          Text:
            At ITI start InitialiseOptoTrial draws this trial's Zapit command: laser on with probability StimProbability after the warmup trials, otherwise laser off (sham), each with a condition from the session's Zapit stimulus config. ArmZapit runs once the ITI has finished, on hardware-triggered rigs; OptoOnset turns the laser (or sham) on at beep 0, LeadTime before the first tone pip, and stops it at the outcome or after OptogeneticMaxDuration. Nothing is sent to Zapit in sessions without optogenetics.

            StimulusLeftOn? (from the StartITI monitor): if a trial ever ends without its StopStimulus, the next ITI start sends one, so a continuous stimulus can never run on into the next trial.

        SubscribeSubject TaskParams => #53
        SubscribeSubject TrialNumber
        -> Take(Count=1) => #64
        #64, #53 -> WithLatestFrom
        -> InitialiseOptoTrial(Seed=-1)
        -> MulticastSubject OptoTrial
    SubscribeSubject MouseVirtualPosition => #1
    #0, #1 -> WithLatestFrom => #2
    SubscribeSubject TaskParams => #5
    -> MemberSelector(Selector=QuantizeBinSize) => #6
    #5 -> MemberSelector(Selector=StartFreq) => #10
    #5 -> MemberSelector(Selector=EndFreq) => #11
    Defer "Random Track Length" => #9
        IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=3, RangeMin=80, RangeMax=120)
        -> Bonsai.Numerics.Permutation
        -> Take(Count=1) => #2
        -> Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
        -> Bonsai.Numerics.Distributions.Sample => #5
        #2, #5 -> Zip => #6
        SubscribeSubject ShapingStage => #7
        #6, #7 -> WithLatestFrom => #8
        SubscribeSubject TaskParams => #9
        #8, #9 -> WithLatestFrom => #10
        -> Bonsai.Scripting.Expressions.ExpressionTransform HalveInStage1or2
          Expression: it.Item1.Item2 <= 2 ? 0.125 * Convert.ToDouble(it.Item1.Item1.Item1) : Convert.ToDouble(it.Item1.Item1.Item1)
        -> MulticastSubject TrackLength
        -> WorkflowOutput
        #10 -> Bonsai.Scripting.Expressions.ExpressionTransform TruncationPoint
          Expression: it.Item1.Item2 == 6 && it.Item1.Item1.Item2 < it.Item2.Truncation.Fraction && it.Item2.Truncation.Points.Count > 0 ? it.Item2.Truncation.Points[Convert.ToInt32(Math.Floor(it.Item1.Item1.Item2 / it.Item2.Truncation.Fraction * it.Item2.Truncation.Points.Count))] : 1.0
        -> MulticastSubject TruncationPoint
    #9, #10, #11 -> Zip => #12
    GroupWorkflow IsTrialEnd(Description="Determines trial end based on shaping stage")
        Disable SubscribeSubject CurrFreq => #0
        Disable SubscribeSubject RewardFloorFreq => #1
        #0, #1 -> Disable WithLatestFrom
        -> Disable Condition WaitForReset
          Description: Superseded by the TrialStarted gate below. This only checked that CurrFreq was below the reward floor, which is also true during the inter-trial interval (CurrFreq is reset to 0 there), so it armed the trial-end detector before the tone existed and let consummatory licks abort the next trial.
          Workflow
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 < it.Item2
            -> WorkflowOutput

        SubscribeSubject ShapingStage => #4
        SubscribeSubject BeepTimer => #5
        SubscribeSubject TaskParams
        -> Bonsai.Scripting.Expressions.ExpressionTransform CueStartBeep
          Description: Skip count before this group starts listening: 1 as before, or LeadTime / 50 ms in an optogenetics session. As on main, it arms at the first tone pip on trial 1 and one beep (50 ms) earlier from trial 2, because BeepTimer replays the previous trial's last beep to the new subscription.
          Expression: it.Optogenetics.Enabled ? Convert.ToInt32(Math.Round(it.Optogenetics.LeadTime / 0.05)) : 1
        -> PropertyMapping(Count) => #47
        #5, #47 -> Skip(Count=1)
        -> Take(Count=1) => #7
        #4, #7 -> SubscribeWhen
        -> Take(Count=1) => #9
        -> Condition IsStage1or2
            SubscribeSubject ShapingStage => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsStage1or2
              Expression: ((it >= 1) && (it <= 2))
            -> WorkflowOutput
        -> SelectMany FreqInRewZone => #11
            SubscribeSubject CurrFreq => #0
            SubscribeSubject RewardFloorFreq => #1
            #0, #1 -> WithLatestFrom
            -> Condition FreqAboveThreshold
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.Item1 >= it.Item2
                -> WorkflowOutput
            -> Take(Count=1)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        #9 -> Condition IsStage3
            SubscribeSubject ShapingStage => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> SelectMany LickDetected
            SubscribeSubject LickStateLeft
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> Condition LickOnTarget => #14
            SubscribeSubject CurrFreq => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject RewardFloorFreq => #3
            #2, #3 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput
        #9 -> Condition IsStage4or5or6
            SubscribeSubject ShapingStage => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform Is4or5or6
              Expression: ((it >= 4) && (it <= 6))
            -> WorkflowOutput
        -> SelectMany LickDetected => #16
            SubscribeSubject LickStateLeft
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> Condition LickOnTarget => #17
            SubscribeSubject CurrFreq => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject RewardFloorFreq => #3
            SubscribeSubject RewardCeilFreq => #4
            #3, #4 -> Zip => #5
            #2, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
              Expression: ((it.Item1 >= it.Item2.Item1) && (it.Item1 <= it.Item2.Item2))
            -> WorkflowOutput
        #16 -> Condition LickOffTarget
            SubscribeSubject CurrFreq => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject RewardFloorFreq => #3
            SubscribeSubject RewardCeilFreq => #4
            #3, #4 -> Zip => #5
            #2, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsOffTarget
              Expression: ((it.Item1 < it.Item2.Item1) || (it.Item1 > it.Item2.Item2))
            -> WorkflowOutput
        -> Condition WrongLicksAboveLimit => #19
            SubscribeSubject LickCount => #0
            SubscribeSubject TaskParams
            -> Bonsai.Scripting.Expressions.ExpressionTransform WrongLickLimit => #2
              Expression: it.ShapingStage == 4 ? Convert.ToDouble(it.Punishment.Stage4PunishedLick) : it.ShapingStage >= 5 ? Convert.ToDouble(it.Punishment.Stage5PunishedLick) : Convert.ToDouble(1000)
            #0, #2 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform LicksAboveLimit
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput

            Disable SubscribeSubject LickCount => #6
            Disable SubscribeSubject TaskParams => #7
            Disable SubscribeSubject ShapingStage => #8
            #7, #8 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform WrongLickLimit => #10
              Expression: it.Item2 == 4 ? Convert.ToDouble(it.Item1.Punishment.Stage4PunishedLick) : it.Item2 >= 5 ? Convert.ToDouble(it.Item1.Punishment.Stage5PunishedLick) : Convert.ToDouble(1000)
            #6, #10 -> Disable WithLatestFrom
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform LicksAboveLimit
              Expression: (it.Item1 >= it.Item2)
            -> Disable WorkflowOutput
        #11, #14, #17, #19 -> Merge
        -> WorkflowOutput

        Disable SubscribeSubject ShapingStage => #22
        Disable SubscribeSubject CurrFreq => #23
        Disable SubscribeSubject RewardFloorFreq => #24
        #23, #24 -> Disable WithLatestFrom
        -> Disable Condition WaitForReset
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 < it.Item2
            -> WorkflowOutput
        -> Disable Take(Count=1) => #27
        #22, #27 -> Disable SubscribeWhen
        -> Disable Take(Count=1) => #29
        -> Disable Condition TimeRemaining => #30
            SubscribeSubject BeepTimer => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject MaxTrialTimeSec => #3
            #2, #3 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it.Item1 < it.Item2)
            -> WorkflowOutput
        -> Disable Condition IsStage1or2
            SubscribeSubject ShapingStage => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsStage1or2
              Expression: ((it >= 1) && (it <= 2))
            -> WorkflowOutput
        -> Disable SelectMany FreqInRewZone => #32
            SubscribeSubject CurrFreq => #0
            SubscribeSubject RewardFloorFreq => #1
            #0, #1 -> WithLatestFrom
            -> Condition FreqAboveThreshold
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.Item1 >= it.Item2
                -> WorkflowOutput
            -> Take(Count=1)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        #30 -> Disable Condition IsStage3
            SubscribeSubject ShapingStage => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Disable SelectMany LickDetected
            SubscribeSubject LickStateLeft
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> Disable Condition LickOnTarget => #35
            SubscribeSubject CurrFreq => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject RewardFloorFreq => #3
            #2, #3 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput
        #30 -> Disable Condition IsStage4or5or6
            SubscribeSubject ShapingStage => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform Is4or5or6
              Expression: ((it >= 4) && (it <= 6))
            -> WorkflowOutput
        -> Disable SelectMany LickDetected => #37
            SubscribeSubject LickStateLeft
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> Disable Condition LickOnTarget => #38
            SubscribeSubject CurrFreq => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject RewardFloorFreq => #3
            SubscribeSubject RewardCeilFreq => #4
            #3, #4 -> Zip => #5
            #2, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
              Expression: ((it.Item1 >= it.Item2.Item1) && (it.Item1 <= it.Item2.Item2))
            -> WorkflowOutput
        #37 -> Disable Condition LickOffTarget
            SubscribeSubject CurrFreq => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject RewardFloorFreq => #3
            SubscribeSubject RewardCeilFreq => #4
            #3, #4 -> Zip => #5
            #2, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsOffTarget
              Expression: ((it.Item1 < it.Item2.Item1) || (it.Item1 > it.Item2.Item2))
            -> WorkflowOutput
        -> Disable Condition WrongLicksAboveLimit => #40
            SubscribeSubject LickCount => #0
            SubscribeSubject TaskParams
            -> Bonsai.Scripting.Expressions.ExpressionTransform WrongLickLimit => #2
              Expression: it.ShapingStage == 4 ? Convert.ToDouble(it.Punishment.Stage4PunishedLick) : it.ShapingStage >= 5 ? Convert.ToDouble(it.Punishment.Stage5PunishedLick) : Convert.ToDouble(1000)
            #0, #2 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform LicksAboveLimit
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput

            Disable SubscribeSubject LickCount => #6
            Disable SubscribeSubject TaskParams => #7
            Disable SubscribeSubject ShapingStage => #8
            #7, #8 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform WrongLickLimit => #10
              Expression: it.Item2 == 4 ? Convert.ToDouble(it.Item1.Punishment.Stage4PunishedLick) : it.Item2 >= 5 ? Convert.ToDouble(it.Item1.Punishment.Stage5PunishedLick) : Convert.ToDouble(1000)
            #6, #10 -> Disable WithLatestFrom
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform LicksAboveLimit
              Expression: (it.Item1 >= it.Item2)
            -> Disable WorkflowOutput
        #29 -> Disable Condition NoTimeRemaining
            SubscribeSubject BeepTimer => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject MaxTrialTimeSec => #3
            #2, #3 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true) => #42
        #32, #35, #38, #40, #42 -> Disable Merge
        -> Disable WorkflowOutput
    -> GroupWorkflow Monitor => #26
        ExternalizedMapping(Value)
        -> StringProperty(Value=IsTrialEnd)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    GroupWorkflow IsTimeOut
        Disable SubscribeSubject BeepTimer
        -> Disable Condition NoTimeRemaining
            Disable SubscribeSubject BeepTimer => #0
            Disable SubscribeSubject MaxTrialTimeSec => #1
            #0, #1 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it.Item1 >= it.Item2)
            -> Disable WorkflowOutput

            WorkflowInput Source1 => #5
            SubscribeSubject MaxTrialTimeSec => #6
            #5, #6 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true)
        -> Disable WorkflowOutput

        SubscribeSubject MaxTrialTimeSec
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT10S) => #6
        SubscribeSubject BeepTimer => #7
        SubscribeSubject TaskParams
        -> Bonsai.Scripting.Expressions.ExpressionTransform CueStartBeep
          Description: Skip count before this group starts listening: 1 as before, or LeadTime / 50 ms in an optogenetics session. As on main, it arms at the first tone pip on trial 1 and one beep (50 ms) earlier from trial 2, because BeepTimer replays the previous trial's last beep to the new subscription.
          Expression: it.Optogenetics.Enabled ? Convert.ToInt32(Math.Round(it.Optogenetics.LeadTime / 0.05)) : 1
        -> PropertyMapping(Count) => #17
        #7, #17 -> Skip(Count=1)
        -> Take(Count=1) => #9
        #6, #9 -> SubscribeWhen
        -> Condition IsNotStage1-3
            SubscribeSubject ShapingStage => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsNotStage1-3
              Expression: (it > 3)
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject WasTimeout
        -> WorkflowOutput
    -> GroupWorkflow Monitor => #28
        ExternalizedMapping(Value)
        -> StringProperty(Value=IsTimeOut)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    GroupWorkflow IsEndOfTrack
        Disable SubscribeSubject BeepTimer
        -> Disable Condition NoTimeRemaining
            Disable SubscribeSubject BeepTimer => #0
            Disable SubscribeSubject MaxTrialTimeSec => #1
            #0, #1 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it.Item1 >= it.Item2)
            -> Disable WorkflowOutput

            WorkflowInput Source1 => #5
            SubscribeSubject MaxTrialTimeSec => #6
            #5, #6 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true)
        -> Disable WorkflowOutput

        SubscribeSubject MouseVirtualPosition => #4
        SubscribeSubject TrackLength => #5
        #4, #5 -> CombineLatest
        -> Condition IsNotStage1or2
            SubscribeSubject ShapingStage => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsNotStage1or2
              Expression: (it > 2)
            -> WorkflowOutput
        -> Condition IsEqual
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it.Item1 == it.Item2)
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject HitEndOfTrack
        -> WorkflowOutput
    -> GroupWorkflow Monitor => #30
        ExternalizedMapping(Value)
        -> StringProperty(Value=IsEndOfTrack)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    #26, #28, #30 -> Merge => #31
    SubscribeSubject StartFreqV => #37
    SubscribeSubject EndFreqV => #38
    #9, #37, #38 -> Zip => #39
    SubscribeSubject TaskParams
    -> Bonsai.Scripting.Expressions.ExpressionTransform CueStartBeep
      Description: First beep with a tone pip: 1 as before, or LeadTime / 50 ms in an optogenetics session, so the laser (on at beep 0) leads the cue by LeadTime on every trial of that session, stimulated or not.
      Expression: it.Optogenetics.Enabled ? Convert.ToInt32(Math.Round(it.Optogenetics.LeadTime / 0.05)) : 1
    -> PropertyMapping(Count) => #68
    #2, #68 -> Skip(Count=1) => #3
    -> MemberSelector(Selector=Item2) => #4
    #4, #6 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Quantize Wheel Distance" => #8
      Expression: Math.Round(it.Item1/it.Item2) * it.Item2
    #8, #12 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "cm to Hz" => #14
      Expression: it.Item2.Item2*Math.Pow(it.Item2.Item3/it.Item2.Item2, Math.Max(0, Math.Min(1, it.Item2.Item1 <= 0 ? 0 : it.Item1 / it.Item2.Item1)))
    -> Condition IsTrial1
        SubscribeSubject ShapingStage
        -> Take(Count=1)
        -> Equal(Operand=IntProperty(Value=1)) => #2
        Source2=#2 -> WorkflowOutput
    -> GroupWorkflow Monitor
        ExternalizedMapping(Value)
        -> StringProperty(Value=IsFirstStageSound)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    -> GroupWorkflow AddFreqDriftA => #17
        WorkflowInput Source1 => #0
        SubscribeSubject TaskParams => #1
        -> MemberSelector(Selector=StartFreq) => #2
        -> PropertyMapping(Value) => #3
        #0, #3 -> Subtract(Operand=DoubleProperty(Value=2000))
        -> Bonsai.Scripting.Expressions.ExpressionTransform FreqFromMoving => #5
          Expression: it
        SubscribeSubject BeepTimer => #6
        #1 -> MemberSelector(Selector=EndFreq) => #7
        SubscribeSubject DriftBeepsTillEnd => #8
        #2, #7, #8 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier => #10
          Expression: Math.Pow(it.Item2 / it.Item1, 1.0 / it.Item3)
        #6, #10 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier^n-steps => #12
          Expression: Math.Pow(it.Item2, it.Item1)
        SubscribeSubject TaskParams
        -> MemberSelector(Selector=StartFreq) => #14
        #12, #14 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform "geometric drift"
          Expression: it.item2 * it.Item1
        -> PropertyMapping(Value) => #17
        #5, #17 -> Add(Operand=DoubleProperty(Value=2050.3207556014713))
        -> WorkflowOutput
    #14 -> Condition IsNotTrial1
        SubscribeSubject ShapingStage
        -> Take(Count=1)
        -> NotEqual(Operand=IntProperty(Value=1)) => #2
        Source2=#2 -> WorkflowOutput
    -> GroupWorkflow Monitor => #19
        ExternalizedMapping(Value)
        -> StringProperty(Value=IsNOTFirstStageSound)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    #17, #19 -> Merge
    -> MulticastSubject CurrFreq
    -> GroupWorkflow MakeSoundwave
        WorkflowInput Source1 => #0
        SubscribeSubject TaskParams => #1
        #0, #1 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform GetPercentProgress => #3
          Expression: Convert.ToInt32(Math.Max(0.0, Math.Min(Convert.ToDouble(it.Item2.NFreqBins) - 1.0, Convert.ToDouble(it.Item1) <= 0.0 ? 0.0 : Math.Round(Math.Log(Convert.ToDouble(it.Item1) / Convert.ToDouble(it.Item2.StartFreq)) / Math.Log(Convert.ToDouble(it.Item2.EndFreq) / Convert.ToDouble(it.Item2.StartFreq)) * (Convert.ToDouble(it.Item2.NFreqBins) - 1.0)))))
        SubscribeSubject WaveformDict => #4
        #3, #4 -> WithLatestFrom
        -> InputMapping(Selector=Item2, Value(Selector=Item1))
        -> Index(Operand=IntProperty(Value=0))
        -> WorkflowOutput
        #3 -> MulticastSubject AudBin
    -> GroupWorkflow Monitor
        ExternalizedMapping(Value)
        -> StringProperty(Value=MadeSound)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    -> GroupWorkflow SilenceAfterTruncation(Description="Silences the tone past the truncation point on truncated trials (stage 6)")
        WorkflowInput Source1 => #0
        SubscribeSubject CurrFreq => #1
        SubscribeSubject TruncationPoint => #2
        SubscribeSubject TaskParams => #3
        #1, #2, #3 -> CombineLatest => #4
        #0, #4 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform CueActive => #6
          Description: Tone's sweep fraction, compared with the truncation point. EndFreq / StartFreq is divided as whole numbers (25000 / 2000 = 12), exactly as in 'cm to Hz', so the fraction matches how the tone actually sweeps (2-24 kHz) and equals the grating's in HideAfterTruncation. Rounded to 3 decimals in both, so CurrFreq's whole-Hz rounding cannot put the tone and grating a beep apart.
          Expression: new(it.Item1 as Buffer, (it.Item2.Item2 >= 1 || Math.Round(Math.Log(Convert.ToDouble(it.Item2.Item1) / Convert.ToDouble(it.Item2.Item3.StartFreq)) / Math.Log(Convert.ToDouble(it.Item2.Item3.EndFreq / it.Item2.Item3.StartFreq)), 3) < it.Item2.Item2 ? 1.0 : 0.0) as Gain)
        -> MemberSelector(Selector=Gain)
        -> MulticastSubject CueActive
        #6 -> InputMapping(Selector=Buffer, RangeMax(Selector=Gain))
        -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1, RescaleType=Linear)
        -> WorkflowOutput
    -> MulticastSubject Buffer => #24
    #24, #31 -> TakeUntil
    -> Disable MemberSelector(Selector=Item1)
    -> StringProperty(Value="GERION INSERTED FOR TESTING")
    -> GroupWorkflow Monitor
        ExternalizedMapping(Value)
        -> StringProperty(Value=ProcessingTrialEnd)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    -> GroupWorkflow ProcessTrialEnd => #36
        WorkflowInput Source1
        -> TakeLast(Count=1) => #1
        SubscribeSubject CurrFreqV => #2
        SubscribeSubject CurrFreq => #3
        #2, #3 -> CombineLatest => #4
        #1, #4 -> WithLatestFrom => #5
        -> MemberSelector(Selector=Item2.Item1)
        -> MulticastSubject TrialEndFreqV
        #5 -> MemberSelector(Selector=Item2.Item2)
        -> MulticastSubject TrialEndFreq => #9
        SubscribeSubject RewardFloorFreq => #10
        SubscribeSubject RewardCeilFreq => #11
        #10, #11 -> Zip => #12
        #9, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
          Expression: ((it.Item1 >= it.Item2.Item1) && (it.Item1 <= it.Item2.Item2))
        -> BehaviorSubject WasOnTarget => #15
        -> Condition OnTarget => #16
            WorkflowInput Source1
            -> WorkflowOutput
        -> Condition NOTTimeoutOrTrackEnd
            SubscribeSubject HitEndOfTrack => #0
            SubscribeSubject WasTimeout => #1
            #0, #1 -> CombineLatest => #2
            WorkflowInput Source1 => #3
            #2, #3 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform IfEitherTrue
              Expression: (it.Item1 || it.Item2)
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Reward => #18
            SubscribeSubject TaskParams
            -> MemberSelector(Selector=Amplitude) => #1
            -> PropertyMapping(Amplitude)
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=480, Frequency=6000, Waveform=Sine, SampleRate=48000, Depth=F32, Amplitude=0.05, Offset=0, Phase=0) => #3
            #1 -> PropertyMapping(RangeMax) => #4
            #3, #4 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
            -> Take(Count=25) => #6
            #1 -> PropertyMapping(Amplitude)
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=480, Frequency=9000, Waveform=Sine, SampleRate=48000, Depth=F32, Amplitude=0.5, Offset=0, Phase=0) => #8
            #1 -> PropertyMapping(RangeMax) => #9
            #8, #9 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
            -> Take(Count=25) => #11
            #6, #11 -> Concat
            -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1)
            -> MulticastSubject RewardBuffer
            -> Disable Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on DELL S2722DC (5- HD Audio Driver for Display Audio)", SampleRate=50000, State=Playing)
            -> TakeLast(Count=1)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput

            WorkflowInput Source1
            -> Condition IfReward
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> MulticastSubject TriggerValve
        #16 -> Condition WASTimeoutOrTrackEnd
            SubscribeSubject HitEndOfTrack => #0
            SubscribeSubject WasTimeout => #1
            #0, #1 -> CombineLatest => #2
            WorkflowInput Source1 => #3
            #2, #3 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform IfEitherTrue
              Expression: (it.Item1 || it.Item2)
            -> WorkflowOutput
        -> SelectMany PunishmentToneAndTimeout => #20
            SubscribeSubject ErrorTone => #0
            DoubleProperty(Value=32767)
            -> Bonsai.Scripting.Expressions.ExpressionTransform "S16 to F32"
              Expression: 1/it
            -> PropertyMapping(Scale) => #3
            #0, #3 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=3.0518509475997192E-05, Shift=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1)
            -> MulticastSubject ErrorBuffer
            -> Disable Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on DELL S2722DC (5- HD Audio Driver for Display Audio)", SampleRate=50000, State=Playing)
            -> TakeLast(Count=1) => #9
            SubscribeSubject TaskParams
            -> MemberSelector(Selector=Punishment.TimeoutSec)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT2S) => #14
            #9, #14 -> Zip
            -> BooleanProperty(Value=false)
            -> WorkflowOutput

            BooleanProperty(Value=true)
            -> MulticastSubject WasPunished
        SubscribeSubject ShapingStage => #21
        #15 -> Condition OffTarget => #22
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #21, #22 -> SubscribeWhen
        -> Take(Count=1) => #24
        -> Condition IsStage4or5or6
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform Is4or5or6
              Expression: ((it >= 4) && (it <= 6))
            -> WorkflowOutput
        -> SelectMany PunishmentToneAndTimeout => #26
            SubscribeSubject ErrorTone => #0
            DoubleProperty(Value=32767)
            -> Bonsai.Scripting.Expressions.ExpressionTransform "S16 to F32"
              Expression: 1/it
            -> PropertyMapping(Scale) => #3
            #0, #3 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=3.0518509475997192E-05, Shift=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1)
            -> MulticastSubject ErrorBuffer
            -> Disable Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on DELL S2722DC (5- HD Audio Driver for Display Audio)", SampleRate=50000, State=Playing)
            -> TakeLast(Count=1) => #9
            SubscribeSubject TaskParams
            -> MemberSelector(Selector=Punishment.TimeoutSec)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT2S) => #14
            #9, #14 -> Zip
            -> BooleanProperty(Value=false)
            -> WorkflowOutput

            BooleanProperty(Value=true)
            -> MulticastSubject WasPunished
        #24 -> Condition IsNotStage4or5or6?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsNot4or5or6
              Expression: (it < 4)
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #28
        #18, #20, #26, #28 -> Merge
        -> MulticastSubject WasRewarded
        -> BooleanProperty(Value=true)
        -> Delay(DueTime=PT2S)
        -> MulticastSubject TrialEnded
        -> Take(Count=1)
        -> WorkflowOutput
        #15 -> DoubleProperty(Value=0)
        -> MulticastSubject TrialActive
    #8, #39 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "cm to SpatFreq" => #41
      Expression: it.Item2.Item2*Math.Pow(it.Item2.Item3/it.Item2.Item2, Math.Max(0, Math.Min(1, it.Item2.Item1 <= 0 ? 0 : it.Item1 / it.Item2.Item1)))
    -> Condition IsTrial1
        SubscribeSubject ShapingStage
        -> Take(Count=1)
        -> Equal(Operand=IntProperty(Value=1)) => #2
        Source2=#2 -> WorkflowOutput
    -> GroupWorkflow Monitor
        ExternalizedMapping(Value)
        -> StringProperty(Value=IsFirstStage)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    -> GroupWorkflow AddFreqDriftV => #44
        WorkflowInput Source1 => #0
        SubscribeSubject StartFreqV => #1
        -> PropertyMapping(Value) => #2
        #0, #2 -> Subtract(Operand=DoubleProperty(Value=0.03))
        -> Bonsai.Scripting.Expressions.ExpressionTransform FreqFromMoving => #4
          Expression: it
        SubscribeSubject BeepTimer => #5
        SubscribeSubject EndFreqV => #6
        SubscribeSubject DriftBeepsTillEnd => #7
        #1, #6, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier => #9
          Expression: Math.Pow(it.Item2 / it.Item1, 1.0 / it.Item3)
        #5, #9 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier^n-steps => #11
          Expression: Math.Pow(it.Item2, it.Item1)
        SubscribeSubject StartFreqV => #12
        #11, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform "geometric drift"
          Expression: it.item2 * it.Item1
        -> PropertyMapping(Value) => #15
        #4, #15 -> Add(Operand=DoubleProperty(Value=0.030698789768422635))
        -> WorkflowOutput
    #41 -> Condition IsNotTrial1
        SubscribeSubject ShapingStage
        -> Take(Count=1)
        -> NotEqual(Operand=IntProperty(Value=1)) => #2
        Source2=#2 -> WorkflowOutput
    -> GroupWorkflow Monitor => #46
        ExternalizedMapping(Value)
        -> StringProperty(Value=IsNOTFirstStage)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    #44, #46 -> Merge
    -> MulticastSubject CurrFreqV => #48
    #3 -> MemberSelector(Selector=Item1) => #49
    -> GroupWorkflow OpacityOnOff => #50
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform "On Every Beep" => #1
          Expression: 1.0
        SubscribeSubject Opacity
        -> PropertyMapping(Value) => #3
        #1, #3 -> Multiply(Operand=DoubleProperty(Value=1)) => #4
        SubscribeSubject VisualStimActive
        -> PropertyMapping(Value) => #6
        #4, #6 -> Multiply(Operand=DoubleProperty(Value=0)) => #7
        SubscribeSubject TrialActive
        -> PropertyMapping(Value) => #9
        #7, #9 -> Multiply(Operand=DoubleProperty(Value=1))
        -> MulticastSubject CurrOpacity
        -> WorkflowOutput
    #49 -> GroupWorkflow RandomisePhase => #51
        WorkflowInput Source1
        -> Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: (it*2*Math.Pi)
        -> MulticastSubject CurrPhase
        -> WorkflowOutput
    #48, #50, #51 -> Zip => #52
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject GratingSpatialFrequency => #54
    #52 -> GroupWorkflow HideAfterTruncation(Description="Hides the grating past the truncation point on truncated trials (stage 6)") => #55
        WorkflowInput Source1 => #0
        SubscribeSubject TruncationPoint => #1
        SubscribeSubject StartFreqV => #2
        SubscribeSubject EndFreqV => #3
        #1, #2, #3 -> CombineLatest => #4
        #0, #4 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform Opacity
          Description="Grating's sweep fraction, rounded to 3 decimals like the tone's in SilenceAfterTruncation, so both are hidden from the same position."
          Expression: it.Item2.Item1 >= 1 || Math.Round(Math.Log(Convert.ToDouble(it.Item1.Item1) / Convert.ToDouble(it.Item2.Item2)) / Math.Log(Convert.ToDouble(it.Item2.Item3) / Convert.ToDouble(it.Item2.Item2)), 3) < it.Item2.Item1 ? it.Item1.Item2 : 0.0
        -> WorkflowOutput
    #55, #3, #52 -> GroupWorkflow LogStimulus
      Description: One StimulusLog row per beep while the trial is active (TrialActive = 1, so rows stop at the outcome): the beep count and position from Skip and the grating from the visual branch, zipped beep by beep, with the tone values that same beep set (CurrFreq, AudBin, CueActive are updated by the tone branch before the grating branch runs). Reads the tone only through those subjects, so the tone's chain is untouched. Also publishes CueOnsetHarp, the Harp time of the trial's first row. Sits in series between HideAfterTruncation and GratingOpacity and passes the opacity straight through: a branch that did not lead on to the Repeat would stop the trials restarting.
      Workflow
        WorkflowInput Source1 => #0
        WorkflowInput Source2 => #1
        WorkflowInput Source3 => #2
        #1, #2, #0 -> Zip => #3
        SubscribeSubject CurrFreq => #4
        #3, #4 -> WithLatestFrom => #5
        SubscribeSubject AudBin => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject CueActive => #8
        #7, #8 -> WithLatestFrom => #9
        SubscribeSubject TrialActive => #10
        #9, #10 -> WithLatestFrom
        -> Condition IsTrialActive
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item2 == 1.0
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #13
        SubscribeSubject HarpTime => #14
        #13, #14 -> WithLatestFrom => #15
        SubscribeSubject TrialNumber => #16
        #15, #16 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform FormatStimulusData
          Expression:
            new
            (
            String.Format("{0:F6}", it.Item1.Item2) as HarpTime,
            it.Item2 as Trial,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1 as Beep,
            String.Format("{0:F3}", it.Item1.Item1.Item1.Item1.Item1.Item1.Item2) as MousePosition,
            it.Item1.Item1.Item1.Item1.Item2 as AudFreq,
            it.Item1.Item1.Item1.Item2 as AudBin,
            Convert.ToInt32(it.Item1.Item1.Item2) as CueActive,
            String.Format("{0:F5}", it.Item1.Item1.Item1.Item1.Item1.Item2.Item1) as VisFreq,
            String.Format("{0:0.###}", it.Item1.Item1.Item1.Item1.Item1.Item3) as GratingOpacity
            )
        -> BehaviorSubject StimulusLogRow
        #15 -> Take(Count=1)
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject CueOnsetHarp
        #0 -> WorkflowOutput
    -> MulticastSubject GratingOpacity => #56
    #54, #56 -> CombineLatest => #57
    #36, #57 -> CombineLatest
    -> Take(Count=1)
    -> GroupWorkflow Monitor
        ExternalizedMapping(Value)
        -> StringProperty(Value=ProcessedTrialEnd)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    -> Repeat
    -> WorkflowOutput

    GroupWorkflow StimulusLogger
      Description: Writes the StimulusLog: one row per beep with the stimulus actually presented, built by LogStimulus. Sits here rather than in Logging because a logger there cannot subscribe to a subject declared in TaskLogic (Bonsai reports a circular definition). Not part of the repeating trial chain, so it writes one file per session. AudBin (declared in InitVars) is published by MakeSoundwave.
      Workflow
        SubscribeSubject StimulusLogRow => #0
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=StimulusLog) => #3
            SubscribeSubject AnimalAndSessionID => #4
            #3, #4 -> Zip
            -> Format(Format={0}_{1}_, Selector="Item1, Item2")
            -> Take(Count=1) => #7
            -> UclOpen.Core.StripSubstring => #8
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #11
            #0, #8, #7, #11 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #3
        #0, #3 -> Bonsai.IO.CsvWriter
          FileName=C:\dev\auditory-vr-corridor\Logs\sub-TC001\ses-A42_date-2026-09-23T13-48-00\StimulusLog_A42_TC001_\StimulusLog_A42_TC001_.csv
          Append=false
          Overwrite=true
          Suffix=Timestamp
          IncludeHeader=true
SubscribeSubject StartSession => #12
SubscribeSubject WaveformDict => #13
#12, #13 -> Zip => #14
Source1=#11, Source3=#14 -> SubscribeWhen

SubscribeSubject WheelDistanceCm => #16
SubscribeSubject TrialStartWheelDistance => #17
#16, #17 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform TrialDistance
  Expression: it.Item1 - it.Item2
-> PublishSubject TrialDistance

SubscribeSubject TrialDistance => #21
SubscribeSubject TrialDistFloor => #22
#21, #22 -> WithLatestFrom => #23
SubscribeSubject TrackLength => #24
#23, #24 -> WithLatestFrom => #25
SubscribeSubject TrialEnded => #26
#25, #26 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform CalcVirtualPos => #28
  Description="Prevent pos < 0cm or >TrackLengthcm. Gate on TrialEnded to prevent stale feedback."
  Expression:
    new (
    Convert.ToBoolean(it.Item2) ? 0.0 : Math.Min(it.Item1.Item1.Item2, it.Item1.Item1.Item1) as Floor,
    Convert.ToBoolean(it.Item2) ? 0.0 : Math.Min((it.Item1.Item1.Item1 - Math.Min(it.Item1.Item1.Item2, it.Item1.Item1.Item1)), it.Item1.Item2) as VirtualPos
    )
-> MemberSelector(Selector=Floor)
-> MulticastSubject TrialDistFloor
#28 -> MemberSelector(Selector=VirtualPos)
-> PublishSubject MouseVirtualPosition

SubscribeSubject DrawStimuli => #33
BehaviorSubject<System.Double> GratingSpatialFrequency
-> PropertyMapping(SpatialFrequency(Selector=it)) => #35
BehaviorSubject<System.Double> GratingOpacity
-> PropertyMapping(Opacity) => #37
#33, #35, #37 -> IncludeWorkflow
  Path=BonVision:Primitives.DrawGratings.bonsai
  LocationX=0
  LocationY=30
  Layer=1
  ExtentX=270
  ExtentY=105
  SpatialFrequency=0.03
  TemporalFrequency=0
  Phase=16.8036766
  Angle=90
  SquareWave=false
  Contrast=1
  DutyCycle=nil
  Radius=1000
  Aperture=0
  Opacity=0

GroupWorkflow SessionStats
  Description: Running session metrics shown in the GUI: success rate, trials since the last reward, and time since the last reward. Trial outcomes are read from the same TrialEnded event the TrialLogger uses, so the GUI always agrees with the trial log. The two reward-relative metrics are refreshed once a second and read "--" until the first reward of the session.
  Workflow
    SubscribeSubject TrialEnded
    -> Condition IsTrialEnded? => #1
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject WasRewarded => #2
    #1, #2 -> WithLatestFrom => #3
    SubscribeSubject TrialNumber => #4
    #3, #4 -> WithLatestFrom => #5
    -> Bonsai.Scripting.Expressions.ExpressionTransform RewardedTrialIncrement
      Expression: Convert.ToDouble(it.Item1.Item2)
    -> Accumulate => #7
    #5 -> Bonsai.Scripting.Expressions.ExpressionTransform TrialIncrement
      Expression: 1.0
    -> Accumulate => #9
    #7, #9 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform SuccessRateParts
      Expression:
        new(
        100.0 * it.Item1 / it.Item2 as Percent,
        it.Item1 as Rewarded,
        it.Item2 as Total
        )
    -> Format(Format="{0:0}% ({1:0}/{2:0})", Selector="Percent,Rewarded,Total")
    -> BehaviorSubject SuccessRateText
    SubscribeSubject SessionClockSec
    -> Take(Count=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform SeedNoRewardYet => #16
      Expression: -1.0
    #5 -> Condition IsRewardedTrial? => #17
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1.Item2)
        -> WorkflowOutput
    SubscribeSubject SessionClockSec => #18
    #17, #18 -> WithLatestFrom => #19
    -> Bonsai.Scripting.Expressions.ExpressionTransform ClockAtReward => #20
      Expression: Convert.ToDouble(it.Item2)
    #16, #20 -> Merge
    -> BehaviorSubject LastRewardClockSec
    #19 -> Bonsai.Scripting.Expressions.ExpressionTransform TrialNumberAtReward => #23
      Expression: Convert.ToDouble(it.Item1.Item2)
    #16, #23 -> Merge
    -> BehaviorSubject LastRewardTrialNumber

    Timer(DueTime=PT0S, Period=PT1S)
    -> BehaviorSubject SessionClockSec

    SubscribeSubject SessionClockSec => #28
    SubscribeSubject LastRewardClockSec => #29
    #28, #29 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform FormatTimeSinceReward
      Expression: it.Item2 < 0 ? "--" : TimeSpan.FromSeconds(Convert.ToDouble(it.Item1) - it.Item2).ToString()
    -> BehaviorSubject TimeSinceRewardText

    SubscribeSubject SessionClockSec => #33
    SubscribeSubject TrialNumber => #34
    #33, #34 -> WithLatestFrom => #35
    SubscribeSubject LastRewardTrialNumber => #36
    #35, #36 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform FormatTrialsSinceReward
      Expression: it.Item2 < 0 ? "--" : (Convert.ToDouble(it.Item1.Item2) - it.Item2).ToString()
    -> BehaviorSubject TrialsSinceRewardText

GroupWorkflow EngagementStats
  Description: Labels the animal as engaged or disengaged with the task and reports it to the GUI. A mouse partway through a session often keeps running but stops licking; those trials are not failures, and scoring them as misses makes performance look far worse than it is. Engagement is read from whether each trial contained a lick, judged over contiguous runs of trials rather than trial by trial. The readout lags by half the averaging window, which is what makes each label final rather than a guess. Display only - deliberately not wired to end a session.
  Workflow
    Annotation "Trial outcome"
      Text:
        One item per completed trial: did it contain a lick, was it rewarded, and when it ended.
        Chained from a single TrialEnded pulse so all three always describe the same trial.

    Annotation Engagement
      Text:
        Window, threshold and minimum epoch come from the session JSON so the live labels and the
        offline analysis of the same session use identical settings.

    Annotation "GUI readouts"
      Text:
        Session engaged x engaged success = the raw success rate, so the two together decompose
        performance without discarding anything.

    SubscribeSubject TrialEnded
    -> Condition IsTrialEnded? => #4
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject LickCount => #5
    #4, #5 -> WithLatestFrom => #6
    SubscribeSubject WasRewarded => #7
    #6, #7 -> WithLatestFrom => #8
    SubscribeSubject SessionClockSec => #9
    #8, #9 -> WithLatestFrom => #10
    -> Bonsai.Scripting.Expressions.ExpressionTransform DidLick => #11
      Expression: it.Item1.Item1.Item2 > 0
    #10 -> Bonsai.Scripting.Expressions.ExpressionTransform WasTrialRewarded => #12
      Expression: it.Item1.Item2
    #10 -> Bonsai.Scripting.Expressions.ExpressionTransform TrialEndSec => #13
      Expression: Convert.ToDouble(it.Item2)
    #11, #12, #13 -> Zip => #14
    SubscribeSubject TaskParams
    -> MemberSelector(Selector=Engagement)
    -> PropertyMapping(RollWindow(Selector=RollWindow), RollThreshold(Selector=RollThreshold), MinEpoch(Selector=MinEpoch)) => #17
    #14, #17 -> EngagementFilter(RollWindow=25, RollThreshold=0.5, MinEpoch=10) => #18
    -> Bonsai.Scripting.Expressions.ExpressionTransform FormatEngagement
      Expression: it.Engaged ? "Engaged" : "Disengaged"
    -> BehaviorSubject EngagementText
    #18 -> Bonsai.Scripting.Expressions.ExpressionTransform FormatEpochLength
      Expression: it.EpochTrials.ToString() + " trials / " + TimeSpan.FromSeconds(it.EpochSeconds).ToString()
    -> BehaviorSubject EngagementEpochText
    #18 -> Bonsai.Scripting.Expressions.ExpressionTransform SessionEngagedParts
      Expression:
        new(
        100.0 * it.EngagedFraction as Percent,
        it.EngagedTrials as Engaged,
        it.SettledTrials as Total
        )
    -> Format(Format="{0:0}% ({1:0}/{2:0})", Selector="Percent,Engaged,Total")
    -> BehaviorSubject SessionEngagedText
    #18 -> Bonsai.Scripting.Expressions.ExpressionTransform EngagedSuccessParts
      Expression:
        new(
        (it.EngagedTrials > 0 ? 100.0 * it.EngagedHitRate : 0.0) as Percent,
        it.EngagedRewarded as Rewarded,
        it.EngagedTrials as Total
        )
    -> Format(Format="{0:0}% ({1:0}/{2:0})", Selector="Percent,Rewarded,Total")
    -> BehaviorSubject EngagedSuccessText

GroupWorkflow EventLogger
  Description: Writes the EventLog: one row per experimenter action or spout change, on the Harp clock. Session start, manual valve flushes, spout buttons (motor up/down, HOME, IN, OUT), saving spout positions (Detail: the five saved positions), the animal's spout position file, the steppers being ZEROed, and every position command sent to the spout motors (Detail: the five positions). Manual flushes look like rewards in the valve binary, so this is where they can be told apart. Sits at the top level rather than in Logging because the GUI reads subjects declared in Logging, so a logger there cannot subscribe to the GUI's buttons (Bonsai reports a circular definition).
  Workflow
    SubscribeSubject StartSession
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
      Expression: new("SessionStart" as Event, "" as Detail)
    SubscribeSubject GUI_Callback_Left_flush
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
      Expression: new("LeftFlush" as Event, "" as Detail)
    SubscribeSubject GUI_Callback_Right_flush
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
      Expression: new("RightFlush" as Event, "" as Detail)
    SubscribeSubject Motor1_UP
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
      Expression: new("Motor1Up" as Event, "" as Detail)
    SubscribeSubject Motor1_DOWN
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
      Expression: new("Motor1Down" as Event, "" as Detail)
    SubscribeSubject Motor2_UP
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #11
      Expression: new("Motor2Up" as Event, "" as Detail)
    SubscribeSubject Motor2_DOWN
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
      Expression: new("Motor2Down" as Event, "" as Detail)
    SubscribeSubject Motor3_UP
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
      Expression: new("Motor3Up" as Event, "" as Detail)
    SubscribeSubject Motor3_DOWN
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
      Expression: new("Motor3Down" as Event, "" as Detail)
    SubscribeSubject Motor4_UP
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #19
      Expression: new("Motor4Up" as Event, "" as Detail)
    SubscribeSubject Motor4_DOWN
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #21
      Expression: new("Motor4Down" as Event, "" as Detail)
    SubscribeSubject Motor5_UP
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: new("Motor5Up" as Event, "" as Detail)
    SubscribeSubject Motor5_DOWN
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #25
      Expression: new("Motor5Down" as Event, "" as Detail)
    SubscribeSubject GUICallbackStepperHOME
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #27
      Expression: new("Home" as Event, "" as Detail)
    SubscribeSubject GUICallbackStepperIN
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #29
      Expression: new("In" as Event, "" as Detail)
    SubscribeSubject GUICallbackStepperOUT
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #31
      Expression: new("Out" as Event, "" as Detail)
    SubscribeSubject SpoutPositionFileName
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #33
      Expression: new("SpoutPositionFile" as Event, it as Detail)
    SubscribeSubject SteppersZEROed
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #35
      Expression: new("SteppersZEROed" as Event, "" as Detail)
    SubscribeSubject StepperPositionCommand
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #37
      Expression: new("SpoutCommand" as Event, Convert.ToString(it.Item1) + ";" + Convert.ToString(it.Item2) + ";" + Convert.ToString(it.Item3) + ";" + Convert.ToString(it.Item4) + ";" + Convert.ToString(it.Item5) as Detail)
    SubscribeSubject SaveSpoutPositions => #38
    SubscribeSubject StepperPosition_BothIn => #39
    #38, #39 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #41
      Expression: new("SaveSpoutPositions" as Event, Convert.ToString(it.Item2.Item1) + ";" + Convert.ToString(it.Item2.Item2) + ";" + Convert.ToString(it.Item2.Item3) + ";" + Convert.ToString(it.Item2.Item4) + ";" + Convert.ToString(it.Item2.Item5) as Detail)
    #1, #3, #5, #7, #9, #11, #13, #15, #17, #19, #21, #23, #25, #27, #29, #31, #33, #35, #37, #41 -> Merge => #42
    SubscribeSubject HarpTime => #43
    #42, #43 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform FormatEventData => #45
      Expression: new(String.Format("{0:F6}", it.Item2) as HarpTime, it.Item1.Event as Event, it.Item1.Detail as Detail)
    ExternalizedMapping(Name, Extension)
    -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
        SubscribeSubject PathPrefix => #0
        WorkflowInput Source1 => #1
        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
        #1, #2 -> StringProperty(Value=EventLog) => #3
        SubscribeSubject AnimalAndSessionID => #4
        #3, #4 -> Zip
        -> Format(Format={0}_{1}_, Selector="Item1, Item2")
        -> Take(Count=1) => #7
        -> UclOpen.Core.StripSubstring => #8
        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
        -> StringProperty(Value=csv)
        -> Take(Count=1) => #11
        #0, #8, #7, #11 -> Zip
        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
        -> WorkflowOutput
    -> PropertyMapping(FileName) => #48
    #45, #48 -> Bonsai.IO.CsvWriter(FileName=EventLog.csv, Append=false, Overwrite=true, Suffix=Timestamp, IncludeHeader=true)
