WorkflowBuilder(Version=2.9.0)
GroupWorkflow IncludedWorkflows
    Disable IncludeWorkflow(Path=UclOpen.Devices:LicketySplit.bonsai, CommandsSubjectName=LickCommands, EventsSubjectName=LickEvents, LickStateSubjectName=LickState)

    IncludeWorkflow
      Path=UclOpen.Devices:DeviceBehaviorBoard.BehaviorBoard.bonsai
      CommandsSubjectName=BehaviorCommands
      PortName=COM3
      DumpRegisters=true
      Heartbeat=Disabled
      EventsSubjectName=BehaviorEvents

    GroupWorkflow RunningWheel
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2)) => #0
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderModePayload(EncoderMode=Displacement)) => #1
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2)) => #2
        #0, #1, #2 -> Merge => #3
        ExternalizedMapping => #4
          Name(DisplayName=CommandsSubjectName, Description="The name of the Subject that carries command messages for a specific behavior device", Category=Subjects)
        #3, #4 -> MulticastSubject BehaviorCommands => #5
        ExternalizedMapping => #6
          Name(DisplayName=EventsSubjectName, Description="The name of the Subject that carries event messages from a specific behavior device", Category=Subjects)
        -> SubscribeSubject BehaviorEvents => #7
        #5, #7 -> SubscribeWhen
        #6 -> SubscribeSubject BehaviorEvents
        -> DelaySubscription(DueTime=PT0.5S)
        -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData)
        -> MemberSelector(Selector=Encoder)
        -> Bonsai.Dsp.Difference(Order=1)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform ConvertSigned
          Expression: it > 32768.0 ? it - 65536.0 : (it < -32768.0 ? it + 65536.0 : it)
        -> Accumulate => #15
        ExternalizedMapping(CountsPerRev, WheelDiameterMm) => #16
        #15, #16 -> GroupWorkflow TicksToCentimeters(Description="Converts steps on a quadrature encoder to a distance in cm, published to a Subject") => #17
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=CountsPerRev, Description="The number of steps recorded on the quadrature encoder in a full revolution", Category="Running Wheel")) => #1
            Source2=#0, Source3=#1 -> Divide(Operand=WorkflowProperty<System.Int16>(Value=4096)) => #2
            ExternalizedMapping(Value(DisplayName=WheelDiameterMm, Description="The diameter of the wheel, in millimetres", Category="Running Wheel"))
            -> IntProperty(Value=170)
            -> Bonsai.Scripting.Expressions.ExpressionTransform CircumferenceCm
              Expression: (it*Math.Pi)/10
            -> PropertyMapping(Value) => #6
            #2, #6 -> Multiply(Operand=FloatProperty(Value=53.407074))
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=WheelDistanceSubjectName, Description="The name of the Subject that carries the wheel distance in cm", Category=Subjects)) => #18
        #17, #18 -> PublishSubject WheelDistanceCm

    IncludeWorkflow(Path=UclOpen.Devices:DeviceBehaviorBoard.Timestamps.bonsai, EventsSubjectName=BehaviorEvents, CommandsSubjectName=BehaviorCommands)

GroupWorkflow TaskState
    Timer(DueTime=PT0S, Period=PT0.25S) => #0
    SubscribeSubject ShapingStage => #1
    #0, #1 -> WithLatestFrom => #2
    SubscribeSubject TrialNumber => #3
    #2, #3 -> WithLatestFrom => #4
    SubscribeSubject InterTrialInterval => #5
    #4, #5 -> WithLatestFrom => #6
    SubscribeSubject WheelDistanceCm => #7
    #6, #7 -> WithLatestFrom => #8
    SubscribeSubject CurrFreq => #9
    #8, #9 -> WithLatestFrom => #10
    SubscribeSubject TrackLength => #11
    #10, #11 -> WithLatestFrom => #12
    SubscribeSubject RewardFloorFreq => #13
    #12, #13 -> WithLatestFrom => #14
    SubscribeSubject RewardCeilFreq => #15
    #14, #15 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        "Stage:" + it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.ToString() +
        " Trial:" + it.Item1.Item1.Item1.Item1.Item1.Item1.Item2.ToString() +
        " ITI:" + it.Item1.Item1.Item1.Item1.Item1.Item2.TotalSeconds.ToString("F0") + "s" +
        " Dist:" + Convert.ToInt32(it.Item1.Item1.Item1.Item1.Item2).ToString() + "cm" +
        " Freq:" + Convert.ToInt32(it.Item1.Item1.Item1.Item2).ToString() + "Hz" +
        " Track:" + Convert.ToInt32(it.Item1.Item1.Item2).ToString() + "cm" +
        " Zone:" + Convert.ToInt32(it.Item1.Item2).ToString() + "-" + Convert.ToInt32(it.Item2).ToString() + "Hz"
    -> WorkflowOutput

GroupWorkflow ComputeRewardZone
    SubscribeSubject ShapingStage => #0
    SubscribeSubject Stage1FloorFreq => #1
    SubscribeSubject Stage2FloorFreq => #2
    SubscribeSubject Stage3FloorFreq => #3
    SubscribeSubject Stage4FloorFreq => #4
    SubscribeSubject Stage5FloorFreq => #5
    SubscribeSubject Stage6FloorFreq => #6
    #0, #1, #2, #3, #4, #5, #6 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform ComputeThreshold
      Expression: it.Item1 == 1 ? Convert.ToDouble(it.Item2) : it.Item1 == 2 ? Convert.ToDouble(it.Item3) : it.Item1 == 3 ? Convert.ToDouble(it.Item4) : it.Item1 == 4 ? Convert.ToDouble(it.Item5) :  it.Item1 == 5 ? Convert.ToDouble(it.Item6) : Convert.ToDouble(it.Item7)
    -> MulticastSubject RewardFloorFreq

    SubscribeSubject ShapingStage => #10
    SubscribeSubject Stage1CeilFreq => #11
    SubscribeSubject Stage2CeilFreq => #12
    SubscribeSubject Stage3CeilFreq => #13
    SubscribeSubject Stage4CeilFreq => #14
    SubscribeSubject Stage5CeilFreq => #15
    SubscribeSubject Stage6CeilFreq => #16
    #10, #11, #12, #13, #14, #15, #16 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform ComputeThreshold
      Expression: it.Item1 == 1 ? Convert.ToDouble(it.Item2) : it.Item1 == 2 ? Convert.ToDouble(it.Item3) : it.Item1 == 3 ? Convert.ToDouble(it.Item4) : it.Item1 == 4 ? Convert.ToDouble(it.Item5) :  it.Item1 == 5 ? Convert.ToDouble(it.Item6) : Convert.ToDouble(it.Item7)
    -> MulticastSubject RewardCeilFreq

GroupWorkflow LickCounter(Description="Increments lick count on each lick")
    Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false) => #0
    SubscribeSubject LickCount => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject LickCount
    -> WorkflowOutput

GroupWorkflow Logging
    GroupWorkflow TrialLogger
        SubscribeSubject TrialEnded
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Format(Format={0:F2}, Selector="") => #3
        SubscribeSubject TrialNumber => #4
        #3, #4 -> WithLatestFrom => #5
        SubscribeSubject ShapingStage => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject RewardFloorFreq => #8
        #7, #8 -> WithLatestFrom => #9
        SubscribeSubject RewardCeilFreq => #10
        #9, #10 -> WithLatestFrom => #11
        SubscribeSubject TrialEndFreq => #12
        #11, #12 -> WithLatestFrom => #13
        SubscribeSubject TrackLength => #14
        #13, #14 -> WithLatestFrom => #15
        SubscribeSubject WheelDistanceCm => #16
        #15, #16 -> WithLatestFrom => #17
        SubscribeSubject LickCount => #18
        #17, #18 -> WithLatestFrom => #19
        SubscribeSubject WasRewarded => #20
        #19, #20 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform FormatTrialData => #22
          Expression:
            new
            (
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1 as BonsaiTime,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Trial,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as ShapingStage,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as RewFreqFloor,
            it.Item1.Item1.Item1.Item1.Item1.Item2 as RewFreqCeil,
            it.Item1.Item1.Item1.Item1.Item2 as TrialEndFreq,
            it.Item1.Item1.Item1.Item2 as TrackLength,
            it.Item1.Item1.Item2 as TrialEndPosCm,
            it.Item1.Item2 as LickCount,
            it.Item2 as WasRewarded
            )
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=TrialLog) => #3
            SubscribeSubject AnimalAndSessionID => #4
            #3, #4 -> Zip
            -> Format(Format={0}_{1}_, Selector="Item1, Item2")
            -> Take(Count=1) => #7
            -> UclOpen.Core.StripSubstring => #8
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #11
            #0, #8, #7, #11 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #25
        #22, #25 -> Bonsai.IO.CsvWriter
          FileName: c:\Users\CoenL\Documents\TomC\auditory-vr-corridor\Logs\sub-algernon\ses-pepepepe_date-2026-04-09T10-45-10\TrialLog_pepepepe_algernon_\TrialLog_pepepepe_algernon_.csv
          Append=false
          Overwrite=true
          Suffix=Timestamp
          IncludeHeader=true

    GroupWorkflow TaskSchemaLogger
        SubscribeSubject TaskParams
        -> UclOpenAuditoryVrCorridorDataSchema.SerializeToJson(Formatting=None)
        -> Delay(DueTime=PT1S)
        -> GroupWorkflow TaskSchemaLog
            Disable WorkflowInput Source2 => #0
            Disable ExternalizedMapping(Name)
            -> Disable GroupWorkflow FormatFileName
                SubscribeSubject PathPrefix => #0
                WorkflowInput Source1 => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
                #1, #2 -> StringProperty(Value=TaskSchemaLog) => #3
                SubscribeSubject AnimalAndSessionID => #4
                #3, #4 -> Zip
                -> Format(Format={0}_{1}_, Selector="Item1, Item2")
                -> Take(Count=1) => #7
                -> UclOpen.Core.StripSubstring => #8
                StringProperty(Value=json)
                -> Take(Count=1) => #10
                #0, #8, #7, #10 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                -> WorkflowOutput
            -> Disable PropertyMapping(Path) => #3
            #0, #3 -> Disable UclOpen.Logging.JsonWriter
              Path: c:\Users\CoenL\Documents\TomC\auditory-vr-corridor\Logs\sub-r2d2\ses-newest_date-2026-03-05T17-50-13\TaskSchemaLog_newest_r2d2_\TaskSchemaLog_newest_r2d2_.json
              Suffix=Timestamp
              Overwrite=false
            -> Disable WorkflowOutput

            ExternalizedMapping(Name)
            -> GroupWorkflow FormatFileName
                SubscribeSubject PathPrefix => #0
                WorkflowInput Source1 => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
                #1, #2 -> StringProperty(Value=TaskSchemaLog) => #3
                SubscribeSubject AnimalAndSessionID => #4
                #3, #4 -> Zip
                -> Format(Format={0}_{1}_, Selector="Item1, Item2")
                -> Take(Count=1) => #7
                -> UclOpen.Core.StripSubstring => #8
                StringProperty(Value=json)
                -> Take(Count=1) => #10
                #0, #8, #7, #10 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                -> WorkflowOutput
            -> PropertyMapping(Path) => #8
            WorkflowInput Source1 => #9
            #8, #9 -> UclOpen.Loggingv2.JsonWriter
              Path: c:\Users\CoenL\Documents\TomC\auditory-vr-corridor\Logs\sub-algernon\ses-pepepepe_date-2026-04-09T10-45-10\TaskSchemaLog_pepepepe_algernon_\TaskSchemaLog_pepepepe_algernon_.json
              Suffix=None
              Overwrite=false
            -> WorkflowOutput

    GroupWorkflow LogParams
        SubscribeSubject TaskParams
        -> MemberSelector(Selector=LogConfig.LoggingRootPath)
        -> BehaviorSubject LoggingRootPath

        SubscribeSubject TaskParams
        -> MemberSelector(Selector=LogConfig.AnimalId)
        -> BehaviorSubject AnimalID

        SubscribeSubject TaskParams
        -> MemberSelector(Selector=LogConfig.SessionId)
        -> BehaviorSubject SessionID

        SubscribeSubject SessionID => #9
        SubscribeSubject AnimalID => #10
        #9, #10 -> Zip
        -> Format(Format={0}_{1}, Selector="Item1,Item2")
        -> BehaviorSubject AnimalAndSessionID

    GroupWorkflow IntervalLogger
        SubscribeSubject WheelDistanceCm
        -> DistinctUntilChanged => #1
        SubscribeSubject LickCount
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: convert.ToDouble(it)
        -> DistinctUntilChanged => #4
        SubscribeSubject CurrFreq
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: convert.ToDouble(it)
        -> DistinctUntilChanged => #7
        SubscribeSubject CurrAmp
        -> DistinctUntilChanged => #9
        #1, #4, #7, #9 -> Merge
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #12
        SubscribeSubject StartTime => #13
        #12, #13 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform ElapsedMs
          Expression: it.Item1 - it.Item2
        -> Format(Format={0:F2}, Selector="") => #16
        SubscribeSubject TrialNumber => #17
        #16, #17 -> WithLatestFrom => #18
        SubscribeSubject WheelDistanceCm => #19
        #18, #19 -> WithLatestFrom => #20
        SubscribeSubject CurrFreq => #21
        #20, #21 -> WithLatestFrom => #22
        SubscribeSubject CurrAmp => #23
        #22, #23 -> WithLatestFrom => #24
        SubscribeSubject LickCount => #25
        #24, #25 -> WithLatestFrom => #26
        SubscribeSubject WasRewarded => #27
        #26, #27 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform FormatTrialData => #29
          Expression:
            new
            (
            Convert.ToInt32(Convert.ToDouble(it.Item1.Item1.Item1.Item1.Item1.Item1)) as BonsaiTime,
            it.Item1.Item1.Item1.Item1.Item1.Item2 as Trial,
            it.Item1.Item1.Item1.Item1.Item2 as WheelDistanceCm,
            it.Item1.Item1.Item1.Item2 as CurrFreq,
            it.Item1.Item1.Item2 as CurrAmp,
            it.Item1.Item2 as LickCount,
            it.Item2 as WasRewarded
            )
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=IntervalLog) => #3
            SubscribeSubject AnimalAndSessionID => #4
            #3, #4 -> Zip
            -> Format(Format={0}_{1}_, Selector="Item1, Item2")
            -> Take(Count=1) => #7
            -> UclOpen.Core.StripSubstring => #8
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #11
            #0, #8, #7, #11 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #32
        #29, #32 -> Bonsai.IO.CsvWriter
          FileName: c:\Users\CoenL\Documents\TomC\auditory-vr-corridor\Logs\sub-algernon\ses-pepepepe_date-2026-04-09T10-45-10\IntervalLog_pepepepe_algernon_\IntervalLog_pepepepe_algernon_.csv
          Append=false
          Overwrite=true
          Suffix=Timestamp
          IncludeHeader=true
        -> WorkflowOutput

        Disable IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName="")
        Disable IncludeWorkflow(Path=UclOpen.Logging:LogController.bonsai, SubjectId=Algernon, SessionId=001, Path=D:\LocalData)
        Disable IncludeWorkflow(Path=UclOpen.Logging:LogData.bonsai, LogName="", Selector=Seconds, Extension=csv)
        SubscribeSubject CurrAmp

        Disable SubscribeSubject WheelDistanceCm
        -> Disable DistinctUntilChanged => #40
        Disable SubscribeSubject LickCount
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: convert.ToDouble(it)
        -> Disable DistinctUntilChanged => #43
        Disable SubscribeSubject CurrFreq
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: convert.ToDouble(it)
        -> Disable DistinctUntilChanged => #46
        Disable SubscribeSubject CurrAmp
        -> Disable DistinctUntilChanged => #48
        #40, #43, #46, #48 -> Disable CombineLatest
    -> WorkflowOutput

    SubscribeSubject LoggingRootPath
    -> PropertyMapping(Path) => #6
    SubscribeSubject SessionID
    -> PropertyMapping(SessionId) => #8
    SubscribeSubject AnimalID
    -> PropertyMapping(SubjectId) => #10
    #6, #8, #10 -> IncludeWorkflow(Path=UclOpen.Logging:LogController.bonsai, SubjectId=algernon, SessionId=pepepepe, Path=c:\Users\CoenL\Documents\TomC\auditory-vr-corridor\Logs)

    Disable SubscribeSubject BehaviorEvents
    -> Disable IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName=HarpLog)

GroupWorkflow InitMixer
    Bonsai.Mixer.CreateMixerContext(HostApi="Windows DirectSound", DeviceName="DELL S2722DC (5- HD Audio Driver for Display Audio)", SampleRate=50000, SuggestedLatency=nil)
    -> Bonsai.Mixer.StartMixer
    -> BehaviorSubject Mixer

    SubscribeSubject Buffer => #3
    SubscribeSubject Mixer
    -> PropertyMapping(Mixer) => #5
    #3, #5 -> Bonsai.Mixer.QueueBuffer

GroupWorkflow Params(Description=Params)
    ExternalizedMapping(Path(DisplayName=TaskPath))
    -> Bonsai.IO.ReadAllText(Path=C:\Users\CoenL\Documents\TomC\auditory-vr-corridor\session-schemas\current-session\UclOpenAuditoryVrCorridorTaskLogic.json)
    -> UclOpenAuditoryVrCorridorDataSchema.DeserializeFromJson(Type=TypeMapping<UclOpenAuditoryVrCorridorDataSchema.UclOpenAuditoryVrCorridorTaskLogic>)
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskParams

    GroupWorkflow VisParams
        DoubleProperty(Value=4)
        -> BehaviorSubject StartFreqV

        DoubleProperty(Value=16)
        -> BehaviorSubject EndFreqV

        DoubleProperty(Value=0)
        -> BehaviorSubject CurrPhase

        SubscribeSubject StartFreq => #6
        SubscribeSubject EndFreq => #7
        #6, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Start-End-Multiple => #9
          Expression: it.item2/it.Item1
        SubscribeSubject StartFreqV => #10
        SubscribeSubject EndFreqV => #11
        #10, #11 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Start-End-Multiple => #13
          Expression: it.item2/it.Item1
        #9, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Aud-Over-Vis-Multiple
          Expression: it.item1/it.Item2
        -> BehaviorSubject VisToAudMultiple

        DoubleProperty(Value=0)
        -> BehaviorSubject CurrFreqV

        DoubleProperty(Value=1)
        -> BehaviorSubject Opacity

        DoubleProperty(Value=1)
        -> BehaviorSubject CurrOpacity

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=StartFreq)
    -> BehaviorSubject StartFreq

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ShapingStage)
    -> BehaviorSubject ShapingStage

    Disable ExternalizedMapping(Value)
    -> Disable IntProperty(Value=4)
    -> Disable BehaviorSubject ShapingStage

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=EndFreq)
    -> BehaviorSubject EndFreq

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ThresholdFrequencies.Stage1.Floor)
    -> BehaviorSubject Stage1FloorFreq

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ThresholdFrequencies.Stage1.Ceiling)
    -> BehaviorSubject Stage1CeilFreq

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ThresholdFrequencies.Stage2.Floor)
    -> BehaviorSubject Stage2FloorFreq

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ThresholdFrequencies.Stage2.Ceiling)
    -> BehaviorSubject Stage2CeilFreq

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ThresholdFrequencies.Stage3.Floor)
    -> BehaviorSubject Stage3FloorFreq

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ThresholdFrequencies.Stage3.Ceiling)
    -> BehaviorSubject Stage3CeilFreq

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ThresholdFrequencies.Stage4.Floor)
    -> BehaviorSubject Stage4FloorFreq

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ThresholdFrequencies.Stage4.Ceiling)
    -> BehaviorSubject Stage4CeilFreq

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ThresholdFrequencies.Stage5.Floor)
    -> BehaviorSubject Stage5FloorFreq

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ThresholdFrequencies.Stage5.Ceiling)
    -> BehaviorSubject Stage5CeilFreq

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ThresholdFrequencies.Stage6.Floor)
    -> BehaviorSubject Stage6FloorFreq

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ThresholdFrequencies.Stage6.Ceiling)
    -> BehaviorSubject Stage6CeilFreq

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=Punishment.TimeoutSec)
    -> BehaviorSubject PunishmentTimeoutSec

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=Amplitude)
    -> BehaviorSubject Amplitude

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=QuantizeBinSize)
    -> BehaviorSubject QuantizeBinSize

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=Punishment.Stage4PunishedLick)
    -> BehaviorSubject Stage4PunishedLick

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=Punishment.Stage5PunishedLick)
    -> BehaviorSubject Stage5PunishedLick

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=Punishment.Stage6PunishedLick)
    -> BehaviorSubject Stage6PunishedLick

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=NFreqBins)
    -> BehaviorSubject NFreqBins

    DoubleProperty(Value=1000)
    -> BehaviorSubject DriftBeepsTillEnd

    GroupWorkflow InitVars
        BehaviorSubject<System.TimeSpan> InterTrialInterval
        BehaviorSubject<System.Int64> BeepTimer
        BehaviorSubject<System.Double> TrackLength
        BehaviorSubject<System.Double> RewardFloorFreq
        BehaviorSubject<System.Double> RewardCeilFreq
        BehaviorSubject<System.Double> TrialEndFreq
        BehaviorSubject<System.Boolean> TrialEnded

        IntProperty(Value=0) => #7
        -> BehaviorSubject LickCount
        #7 -> BehaviorSubject TrialNumber
        #7 -> BehaviorSubject CurrFreq

        BooleanProperty(Value=false)
        -> BehaviorSubject WasRewarded

        DoubleProperty(Value=0)
        -> BehaviorSubject StartTime

        DoubleProperty(Value=0)
        -> BehaviorSubject TrialStartWheelDistance

        DoubleProperty(Value=0)
        -> BehaviorSubject CurrAmp

        Bonsai.Shaders.CreateWindow
          Width=640
          Height=480
          VSync=On
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=true
          Location=nil
          WindowBorder=Resizable
          WindowState=Normal
          DisplayDevice=Primary
          TargetRenderFrequency=60
          TargetUpdateFrequency=nil
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Resources.LoadResources

Disable GroupWorkflow OLD
    Disable GroupWorkflow IntervalLogger(Description="Logs state at each 50ms interval")
        SubscribeSubject WheelDistanceCm
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject StartTime => #3
        #2, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform ElapsedMs
          Expression: it.Item1 - it.Item2
        -> Format(Format={0:F2}, Selector="") => #6
        SubscribeSubject TrialNumber => #7
        #6, #7 -> WithLatestFrom => #8
        SubscribeSubject ShapingStage => #9
        #8, #9 -> WithLatestFrom => #10
        SubscribeSubject RewardFloorFreq => #11
        #10, #11 -> WithLatestFrom => #12
        SubscribeSubject RewardCeilFreq => #13
        #12, #13 -> WithLatestFrom => #14
        SubscribeSubject TrackLength => #15
        #14, #15 -> WithLatestFrom => #16
        SubscribeSubject CurrFreq => #17
        #16, #17 -> WithLatestFrom => #18
        SubscribeSubject WheelDistanceCm => #19
        #18, #19 -> WithLatestFrom => #20
        SubscribeSubject LickCount => #21
        #20, #21 -> WithLatestFrom => #22
        SubscribeSubject WasRewarded => #23
        #22, #23 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform FormatTrialData
          Expression:
            new
            (
            Convert.ToDouble(it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1) as BonsaiTime,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Trial,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as ShapingStage,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as RewFreqFloor,
            it.Item1.Item1.Item1.Item1.Item1.Item2 as RewFreqCeil,
            it.Item1.Item1.Item1.Item1.Item2 as TrackLength,
            it.Item1.Item1.Item1.Item2 as CurrFreq,
            it.Item1.Item1.Item2 as PosCm,
            it.Item1.Item2 as LickCount,
            it.Item2 as WasRewarded
            )
        -> Bonsai.IO.CsvWriter(FileName=Logs/IntervalLogs/IntervalLog.csv, Append=false, Overwrite=true, Suffix=Timestamp, IncludeHeader=true)

        Disable IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName="")
        Disable IncludeWorkflow(Path=UclOpen.Logging:LogController.bonsai, SubjectId=Algernon, SessionId=001, Path=D:\LocalData)
        Disable IncludeWorkflow(Path=UclOpen.Logging:LogData.bonsai, LogName="", Selector=Seconds, Extension=csv)
    -> Disable GroupWorkflow Params(Description=Params)
        ExternalizedMapping(Value(DisplayName=ShapingStage, Description="Shaping stage: 1=AutoReward, 2=LargeLickZone, 3=SmallLickZone, 4=FullTask"))
        -> IntProperty(Value=6)
        -> BehaviorSubject ShapingStage

        ExternalizedMapping(Value(DisplayName=StartFreq))
        -> IntProperty(Value=2000)
        -> BehaviorSubject StartFreq

        ExternalizedMapping(Value(DisplayName=EndFreq))
        -> IntProperty(Value=25000)
        -> BehaviorSubject EndFreq

        ExternalizedMapping(Value(DisplayName=Stage1ThresholdFreq))
        -> IntProperty(Value=18000)
        -> BehaviorSubject Stage1ThresholdFreq

        ExternalizedMapping(Value(DisplayName=Stage2ThresholdFreq))
        -> IntProperty(Value=18000)
        -> BehaviorSubject Stage2ThresholdFreq

        ExternalizedMapping(Value(DisplayName=Stage3ThresholdFreq))
        -> IntProperty(Value=14000)
        -> BehaviorSubject Stage3ThresholdFreq

        ExternalizedMapping(Value(DisplayName=Stage4ThresholdFreq))
        -> IntProperty(Value=14000)
        -> BehaviorSubject Stage4ThresholdFreq

        ExternalizedMapping(Value(DisplayName=Stage5FloorFreq, Description="Lower bound of target reward zone for Stage 4"))
        -> IntProperty(Value=14000)
        -> BehaviorSubject Stage5ThresholdFreq

        ExternalizedMapping(Value(DisplayName=Stage5CeilFreq, Description="Upper bound of target reward zone for Stage 4"))
        -> IntProperty(Value=22000)
        -> BehaviorSubject Stage5CeilFreq

        ExternalizedMapping(Value(DisplayName=Stage6FloorFreq))
        -> IntProperty(Value=16000)
        -> BehaviorSubject Stage6ThresholdFreq

        ExternalizedMapping(Value(DisplayName=Stage6CeilFreq))
        -> IntProperty(Value=20000)
        -> BehaviorSubject Stage6CeilFreq

        ExternalizedMapping(Value(DisplayName=PunishmentTimeoutSec, Description="Timeout duration in seconds for punishment in Stage 4"))
        -> IntProperty(Value=5)
        -> BehaviorSubject PunishmentTimeoutSec

        ExternalizedMapping(Value(DisplayName=Amplitude))
        -> DoubleProperty(Value=0.5)
        -> BehaviorSubject Amplitude

        ExternalizedMapping(Value(DisplayName=QuantizeBinSize))
        -> IntProperty(Value=1)
        -> BehaviorSubject QuantizeBinSize

        ExternalizedMapping(Value(DisplayName=Stage4PunishedLick))
        -> IntProperty(Value=5)
        -> BehaviorSubject Stage4PunishedLick

        ExternalizedMapping(Value(DisplayName=Stage5PunishedLick))
        -> IntProperty(Value=4)
        -> BehaviorSubject Stage5PunishedLick

        ExternalizedMapping(Value(DisplayName=Stage6PunishedLick))
        -> IntProperty(Value=3)
        -> BehaviorSubject Stage6PunishedLick

        GroupWorkflow InitVars
            BehaviorSubject<System.TimeSpan> InterTrialInterval
            BehaviorSubject<System.Int64> BeepTimer
            BehaviorSubject<System.Double> TrackLength
            BehaviorSubject<System.Double> RewardThresholdFreq
            BehaviorSubject<System.Double> RewardCeilingFreq
            BehaviorSubject<System.Double> TrialEndFreq
            BehaviorSubject<System.Boolean> TrialEnded

            IntProperty(Value=0) => #7
            -> BehaviorSubject LickCount
            #7 -> BehaviorSubject TrialNumber
            #7 -> BehaviorSubject CurrFreq

            BooleanProperty(Value=false)
            -> BehaviorSubject WasRewarded

            DoubleProperty(Value=0)
            -> BehaviorSubject StartTime

            DoubleProperty(Value=0)
            -> BehaviorSubject TrialStartWheelDistance
    -> Disable GroupWorkflow TrialLogger(Description="Logs trial data at trial end (triggered by TrialEnded signal)")
        SubscribeSubject TrialEnded
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Format(Format={0:F2}, Selector="") => #3
        SubscribeSubject TrialNumber => #4
        #3, #4 -> WithLatestFrom => #5
        SubscribeSubject ShapingStage => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject RewardFloorFreq => #8
        #7, #8 -> WithLatestFrom => #9
        SubscribeSubject RewardCeilFreq => #10
        #9, #10 -> WithLatestFrom => #11
        SubscribeSubject TrialEndFreq => #12
        #11, #12 -> WithLatestFrom => #13
        SubscribeSubject TrackLength => #14
        #13, #14 -> WithLatestFrom => #15
        SubscribeSubject WheelDistanceCm => #16
        #15, #16 -> WithLatestFrom => #17
        SubscribeSubject LickCount => #18
        #17, #18 -> WithLatestFrom => #19
        SubscribeSubject WasRewarded => #20
        #19, #20 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform FormatTrialData
          Expression:
            new
            (
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1 as BonsaiTime,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Trial,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as ShapingStage,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as RewFreqFloor,
            it.Item1.Item1.Item1.Item1.Item1.Item2 as RewFreqCeil,
            it.Item1.Item1.Item1.Item1.Item2 as TrialEndFreq,
            it.Item1.Item1.Item1.Item2 as TrackLength,
            it.Item1.Item1.Item2 as TrialEndPosCm,
            it.Item1.Item2 as LickCount,
            it.Item2 as WasRewarded
            )
        -> Bonsai.IO.CsvWriter(FileName=Logs/TrialLogs/TrialLog.csv, Append=false, Overwrite=true, Suffix=Timestamp, IncludeHeader=true)
    -> WorkflowOutput

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
-> IncludeWorkflow
  Path=BonVision:Primitives.DrawQuad.bonsai
  ExtentX=2
  ExtentY=2
  LocationX=0
  LocationY=0
  Layer=0
  Angle=90
  ColorR=0.5
  ColorG=0.5
  ColorB=0.5
  ColorA=1

Defer BeepTimer => #11
    ExternalizedMapping(Period)
    -> Timer(DueTime=PT0S, Period=PT0.05S) => #1
    ExternalizedMapping(RangeMin, RangeMax, Count)
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=2, RangeMin=1, RangeMax=2)
    -> Bonsai.Numerics.Permutation
    -> Take(Count=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> MulticastSubject InterTrialInterval
    -> SelectMany InitITI => #8
        WorkflowInput Source1
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT2S)
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2)) => #9
    #1, #9 -> SubscribeWhen
    -> MulticastSubject BeepTimer
    -> WorkflowOutput
    #9 -> MulticastSubject BehaviorCommands
    #8 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> Take(Count=1)
    -> MulticastSubject StartTime

    SubscribeSubject TrialNumber
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialNumber

    IntProperty(Value=0)
    -> MulticastSubject CurrFreq

    BooleanProperty(Value=false)
    -> MulticastSubject WasRewarded

    IntProperty(Value=0)
    -> MulticastSubject LickCount

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2))
    -> MulticastSubject BehaviorCommands

    DoubleProperty(Value=0)
    -> MulticastSubject CurrFreqV

    Disable BooleanProperty(Value=false)
    -> Disable MulticastSubject TrialEnded
SubscribeSubject WheelDistanceCm => #12
#11, #12 -> WithLatestFrom
-> Skip(Count=1)
-> MemberSelector(Selector=Item2) => #15
SubscribeSubject QuantizeBinSize => #16
#15, #16 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform "Quantize Wheel Distance" => #18
  Expression: Math.Round(it.Item1/it.Item2) * it.Item2
Defer "Random Track Length" => #19
    IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=6, RangeMin=20, RangeMax=120)
    -> Bonsai.Numerics.Permutation
    -> Take(Count=1)
    -> MulticastSubject TrackLength
    -> WorkflowOutput
SubscribeSubject StartFreq => #20
SubscribeSubject EndFreq => #21
#19, #20, #21 -> Zip => #22
#18, #22 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform "cm to Hz" => #24
  Expression: it.Item2.Item2*Math.Pow(it.Item2.Item3/it.Item2.Item2, Math.Max(0, Math.Min(1, it.Item1 /it.Item2.Item1)))
-> Condition IsTrial1
    SubscribeSubject ShapingStage
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1)) => #2
    Source2=#2 -> WorkflowOutput
-> GroupWorkflow AddFreqDrift => #26
    WorkflowInput Source1 => #0
    SubscribeSubject StartFreq => #1
    -> PropertyMapping(Value) => #2
    #0, #2 -> Subtract(Operand=DoubleProperty(Value=2000))
    -> Bonsai.Scripting.Expressions.ExpressionTransform FreqFromMoving => #4
      Expression: it
    SubscribeSubject BeepTimer => #5
    SubscribeSubject EndFreq => #6
    SubscribeSubject DriftBeepsTillEnd => #7
    #1, #6, #7 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier => #9
      Expression: Math.Pow(it.Item2 / it.Item1, 1.0 / it.Item3)
    #5, #9 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier^n-steps => #11
      Expression: Math.Pow(it.Item2, it.Item1)
    SubscribeSubject StartFreq => #12
    #11, #12 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "geometric drift"
      Expression: it.item2 * it.Item1
    -> PropertyMapping(Value) => #15
    #4, #15 -> Add(Operand=DoubleProperty(Value=2075.9539444573556))
    -> WorkflowOutput
#24 -> Condition IsNotTrial1 => #27
    SubscribeSubject ShapingStage
    -> Take(Count=1)
    -> NotEqual(Operand=IntProperty(Value=1)) => #2
    Source2=#2 -> WorkflowOutput
#26, #27 -> Merge
-> MulticastSubject CurrFreq => #29
SubscribeSubject BeepTimer
-> Bonsai.Scripting.Expressions.ExpressionTransform "Alternate On Off" => #31
  Expression: (it % 2 == 0) ? 0.0 : 1.0
SubscribeSubject Amplitude
-> PropertyMapping(Value) => #33
#31, #33 -> Multiply(Operand=DoubleProperty(Value=0.5))
-> MulticastSubject CurrAmp => #35
#29, #35 -> Zip
-> CreateObservable MakeSoundwave
    WorkflowInput Source1 => #0
    -> Take(Count=1)
    -> AsyncSubject settings
    SubscribeSubject StartFreq => #3
    SubscribeSubject EndFreq => #4
    SubscribeSubject NFreqBins => #5
    #0, #3, #4, #5 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform GetPercentProgress => #7
      Expression: Math.Round(Math.Log(Convert.ToDouble(it.Item1.Item1) / Convert.ToDouble(it.Item2)) / Math.Log(Convert.ToDouble(it.Item3)  / Convert.ToDouble(it.Item2)) * (Convert.ToDouble(it.Item4) - 1.0))
    #7, #3, #4, #5 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform GetClosestFreq
      Expression: Convert.ToInt32(Convert.ToDouble(it.Item2) * Math.Pow(Convert.ToDouble(it.Item3) / Convert.ToDouble(it.Item2), it.Item1 / (Convert.ToDouble(it.Item4) - 1.0)))
    -> Bonsai.Scripting.Expressions.ExpressionTransform CreateFileName
      Expression: String.Concat("./waveforms/", Convert.ToString(it), "Hz.wav")
    -> PropertyMapping(FileName)
    -> Bonsai.Audio.AudioReader(FileName=./waveforms/2000Hz.wav, BufferLength=0, SampleRate=0) => #12
    DoubleProperty(Value=32767)
    -> Bonsai.Scripting.Expressions.ExpressionTransform "S16 to F32"
      Expression: 1/it
    -> PropertyMapping(Scale) => #15
    #12, #15 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=3.0518509475997192E-05, Shift=0)
    -> WorkflowOutput

    Disable SubscribeSubject settings
    -> Disable InputMapping(Selector=Item1, Frequency(Selector=Item1), Amplitude(Selector=Item2))
    -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=500, Frequency=4666.92477402651, Waveform=Sine, SampleRate=50000, Depth=F32, Amplitude=0, Offset=0, Phase=0) => #20
    -> Disable Bonsai.Dsp.Tile(RowTiles=2, ColumnTiles=1)
    -> Disable WorkflowOutput
    Disable Annotation sampling_rate(Text=sampling_rate)
    -> Disable IntProperty(Value=50000) => #24
    Disable Annotation buffer_length(Text=buffer_length)
    -> Disable IntProperty(Value=500) => #26
    #24, #26 -> Disable Zip
    -> Disable PropertyMapping(SampleRate(Selector=Item1), BufferLength(Selector=Item2)) => #28
    #24, #26 -> Disable Zip
    -> Disable Divide
    -> Disable Divide(Operand=IntProperty(Value=10))
    -> Disable Add(Operand=IntProperty(Value=0))
    -> Disable PropertyMapping(Frequency) => #33
    #28, #33 -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=500, Frequency=10, Waveform=Sine, SampleRate=50000, Depth=F32, Amplitude=1, Offset=0, Phase=0) => #34
    #20, #34 -> Disable Zip
    -> Disable Multiply
    -> Disable Bonsai.Dsp.Tile(RowTiles=2, ColumnTiles=1)
    -> Disable WorkflowOutput
-> Switch
-> PublishSubject Buffer => #39
GroupWorkflow IsTrialEnd(Description="Determines trial end based on shaping stage") => #40
    SubscribeSubject ShapingStage => #0
    SubscribeSubject CurrFreq => #1
    SubscribeSubject RewardFloorFreq => #2
    #1, #2 -> WithLatestFrom
    -> Condition WaitForReset
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1 < it.Item2
        -> WorkflowOutput
    -> Take(Count=1) => #5
    #0, #5 -> SubscribeWhen
    -> Take(Count=1) => #7
    -> Condition IsStage1or2
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsStage1or2
          Expression: ((it >= 1) && (it <= 2))
        -> WorkflowOutput
    -> SelectMany FreqInRewZone => #9
        SubscribeSubject CurrFreq => #0
        SubscribeSubject RewardFloorFreq => #1
        #0, #1 -> WithLatestFrom
        -> Condition FreqAboveThreshold
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 >= it.Item2
            -> WorkflowOutput
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput

        Disable SubscribeSubject CurrFreq => #7
        Disable SubscribeSubject CurrFreq => #8
        Disable SubscribeSubject RewardFloorFreq => #9
        #8, #9 -> Disable WithLatestFrom
        -> Disable Condition WaitForReset
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 < it.Item2
            -> WorkflowOutput
        -> Disable Take(Count=1) => #12
        #7, #12 -> Disable SubscribeWhen => #13
        Disable SubscribeSubject RewardFloorFreq => #14
        #13, #14 -> Disable WithLatestFrom
        -> Disable Condition FreqAboveThreshold
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 >= it.Item2
            -> WorkflowOutput
        -> Disable Take(Count=1)
        -> Disable BooleanProperty(Value=true)
        -> Disable WorkflowOutput
    #7 -> Condition IsStage3
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> SelectMany LickDetected
        Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> Condition LickOnTarget => #12
        SubscribeSubject CurrFreq => #0
        WorkflowInput Source1 => #1
        #0, #1 -> Sample => #2
        SubscribeSubject RewardFloorFreq => #3
        #2, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
          Expression: (it.Item1 >= it.Item2)
        -> WorkflowOutput
    #7 -> Condition IsStage4or5or6
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform Is4or5or6
          Expression: ((it >= 4) && (it <= 6))
        -> WorkflowOutput
    -> SelectMany LickDetected => #14
        Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> Condition LickOnTarget => #15
        SubscribeSubject CurrFreq => #0
        WorkflowInput Source1 => #1
        #0, #1 -> Sample => #2
        SubscribeSubject RewardFloorFreq => #3
        SubscribeSubject RewardCeilFreq => #4
        #3, #4 -> Zip => #5
        #2, #5 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
          Expression: ((it.Item1 >= it.Item2.Item1) && (it.Item1 <= it.Item2.Item2))
        -> WorkflowOutput
    #14 -> Condition LickOffTarget
        SubscribeSubject CurrFreq => #0
        WorkflowInput Source1 => #1
        #0, #1 -> Sample => #2
        SubscribeSubject RewardFloorFreq => #3
        SubscribeSubject RewardCeilFreq => #4
        #3, #4 -> Zip => #5
        #2, #5 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsOffTarget
          Expression: ((it.Item1 < it.Item2.Item1) || (it.Item1 > it.Item2.Item2))
        -> WorkflowOutput
    -> Condition WrongLicksAboveLimit => #17
        SubscribeSubject LickCount => #0
        SubscribeSubject ShapingStage => #1
        SubscribeSubject Stage4PunishedLick => #2
        SubscribeSubject Stage5PunishedLick => #3
        SubscribeSubject Stage6PunishedLick => #4
        #1, #2, #3, #4 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform WrongLickLimit => #6
          Expression: it.Item1 == 4 ? Convert.ToDouble(it.Item2) : it.Item1 == 5 ? Convert.ToDouble(it.Item3) : it.Item1 == 6 ? Convert.ToDouble(it.Item4) : Convert.ToDouble(1000)
        #0, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform LicksAboveLimit
          Expression: (it.Item1 >= it.Item2)
        -> WorkflowOutput
    #9, #12, #15, #17 -> Merge
    -> WorkflowOutput
#39, #40 -> TakeUntil => #41
SubscribeSubject StartFreqV => #42
SubscribeSubject EndFreqV => #43
#19, #42, #43 -> Zip => #44
#18, #44 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform "cm to SpatFreq" => #46
  Expression: it.Item2.Item2*Math.Pow(it.Item2.Item3/it.Item2.Item2, Math.Max(0, Math.Min(1, it.Item1 /it.Item2.Item1)))
-> Condition IsTrial1
    SubscribeSubject ShapingStage
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1)) => #2
    Source2=#2 -> WorkflowOutput
-> GroupWorkflow AddFreqDriftV => #48
    WorkflowInput Source1 => #0
    SubscribeSubject StartFreqV => #1
    -> PropertyMapping(Value) => #2
    #0, #2 -> Subtract(Operand=DoubleProperty(Value=4))
    -> Bonsai.Scripting.Expressions.ExpressionTransform FreqFromMoving => #4
      Expression: it
    SubscribeSubject BeepTimer => #5
    SubscribeSubject EndFreqV => #6
    SubscribeSubject DriftBeepsTillEnd => #7
    #1, #6, #7 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier => #9
      Expression: Math.Pow(it.Item2 / it.Item1, 1.0 / it.Item3)
    #5, #9 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier^n-steps => #11
      Expression: Math.Pow(it.Item2, it.Item1)
    SubscribeSubject StartFreqV => #12
    #11, #12 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "geometric drift"
      Expression: it.item2 * it.Item1
    -> PropertyMapping(Value) => #15
    #4, #15 -> Add(Operand=DoubleProperty(Value=4.0840485028287761))
    -> WorkflowOutput
#46 -> Condition IsNotTrial1 => #49
    SubscribeSubject ShapingStage
    -> Take(Count=1)
    -> NotEqual(Operand=IntProperty(Value=1)) => #2
    Source2=#2 -> WorkflowOutput
#48, #49 -> Merge
-> MulticastSubject CurrFreqV => #51
SubscribeSubject BeepTimer => #52
-> Bonsai.Scripting.Expressions.ExpressionTransform "Alternate On Off" => #53
  Expression: (it % 2 == 0) ? 0.0 : 1.0
SubscribeSubject Opacity
-> PropertyMapping(Value) => #55
#53, #55 -> Multiply(Operand=DoubleProperty(Value=1))
-> MulticastSubject CurrOpacity => #57
#52 -> Bonsai.Numerics.CreateRandom(Seed=nil)
-> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
-> Bonsai.Numerics.Distributions.Sample
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: (it*360)-180
-> MulticastSubject CurrPhase => #62
#51, #57, #62 -> Zip
-> CreateObservable MakeGrating
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject settingsV

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #4
    SubscribeSubject settingsV => #5
    -> MemberSelector(Selector=Item1)
    -> PropertyMapping(SpatialFrequency) => #7
    #5 -> MemberSelector(Selector=Item2)
    -> PropertyMapping(Opacity) => #9
    #5 -> MemberSelector(Selector=Item3)
    -> PropertyMapping(Phase) => #11
    #4, #7, #9, #11 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawGratings.bonsai
      LocationX=0
      LocationY=0
      Layer=1
      ExtentX=2
      ExtentY=2
      SpatialFrequency=4
      TemporalFrequency=0
      Phase=10265.9365
      Angle=90
      SquareWave=false
      Contrast=1
      DutyCycle=nil
      Radius=1
      Aperture=1
      Opacity=1
    -> WorkflowOutput
-> Switch => #65
#65, #40 -> TakeUntil => #66
#41, #66 -> Zip
-> MemberSelector(Selector=Item1)
-> GroupWorkflow ProcessTrialEnd
    WorkflowInput Source1
    -> TakeLast(Count=1) => #1
    SubscribeSubject CurrFreq => #2
    #1, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject TrialEndFreq => #5
    SubscribeSubject RewardFloorFreq => #6
    SubscribeSubject RewardCeilFreq => #7
    #6, #7 -> Zip => #8
    #5, #8 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
      Expression: ((it.Item1 >= it.Item2.Item1) && (it.Item1 <= it.Item2.Item2))
    -> BehaviorSubject WasOnTarget => #11
    -> Condition OnTarget
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany RewardTone => #13
        SubscribeSubject Amplitude
        -> PropertyMapping(Amplitude)
        -> Bonsai.Dsp.FunctionGenerator(BufferLength=500, Frequency=6000, Waveform=Sine, SampleRate=50000, Depth=F32, Amplitude=0.5, Offset=0, Phase=0)
        -> Take(Count=25) => #3
        SubscribeSubject Amplitude
        -> PropertyMapping(Amplitude)
        -> Bonsai.Dsp.FunctionGenerator(BufferLength=500, Frequency=9000, Waveform=Sine, SampleRate=50000, Depth=F32, Amplitude=0.5, Offset=0, Phase=0)
        -> Take(Count=25) => #7
        #3, #7 -> Concat
        -> Bonsai.Dsp.Tile(RowTiles=2, ColumnTiles=1) => #9
        SubscribeSubject Mixer
        -> PropertyMapping(Mixer) => #11
        #9, #11 -> Bonsai.Mixer.QueueBuffer
        -> Disable Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on DELL S2722DC (5- HD Audio Driver for Display Audio)", SampleRate=50000, State=Playing)
        -> TakeLast(Count=1)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    SubscribeSubject ShapingStage => #14
    #11 -> Condition OffTarget => #15
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    #14, #15 -> SubscribeWhen
    -> Take(Count=1) => #17
    -> Condition IsStage4or5or6
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform Is4or5or6
          Expression: ((it >= 4) && (it <= 6))
        -> WorkflowOutput
    -> SelectMany PunishmentToneAndTimeout => #19
        SubscribeSubject Mixer
        -> PropertyMapping(Mixer) => #1
        Bonsai.Audio.AudioReader(FileName=waveforms\error_tone.wav, BufferLength=0, SampleRate=0) => #2
        DoubleProperty(Value=32767)
        -> Bonsai.Scripting.Expressions.ExpressionTransform "S16 to F32"
          Expression: 1/it
        -> PropertyMapping(Scale) => #5
        #2, #5 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=3.0518509475997192E-05, Shift=0)
        -> Take(Count=1) => #7
        #1, #7 -> Bonsai.Mixer.QueueBuffer
        -> Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on DELL S2722DC (5- HD Audio Driver for Display Audio)", SampleRate=50000, State=Playing)
        -> TakeLast(Count=1) => #10
        SubscribeSubject PunishmentTimeoutSec
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT5S) => #14
        #10, #14 -> Zip
        -> BooleanProperty(Value=false)
        -> WorkflowOutput
    #17 -> Condition IsNotStage4or5or6?
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsNot4or5or6
          Expression: (it < 4)
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #21
    Source1=#13, Source3=#19, Source4=#21 -> Merge
    -> MulticastSubject WasRewarded
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnded
    -> WorkflowOutput
-> Repeat
